# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Painter AddWaveforms

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Painter_AddWaveforms

# Define that this driver is a signal generator without hardware communication
signal_generator: True
signal_analyzer: True


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
# Input Trace
[Input Trace #1]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
section: Input
group: Traces
show_in_measurement_dlg: True

[Input Trace #2]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
section: Input
group: Traces
show_in_measurement_dlg: True


# Output Trace
[Output Trace #1]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
show_in_measurement_dlg: True
