# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Painter Arbitrary Sequence Generator

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Painter_Arbitrary_Sequence_Generator

# Define that the driver is a Signal Generator
signal_generator: True
signal_analyzer: True

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
################################# SEQUENCE SECTION
[Number of Pulses]
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
def_value: 2
group: Sequence
section: Sequence

[Sample Rate]
datatype: DOUBLE
def_value: 2.4E9
unit: Hz
group: Sequence
section: Sequence

[Sequence Delay]
datatype: DOUBLE
unit: ns
def_value: 0
group: Sequence
section: Sequence
tooltip: delay before all the waveforms start

[XY I/Q Ratio]
datatype: DOUBLE
def_value: 1
group: Sequence
section: Sequence
tooltip: ratio of IQ voltages to compensate for mixer arm imbalance

[XY I/Q Phase Skew]
datatype: DOUBLE
unit: degrees
def_value: 0
group: Sequence
section: Sequence
tooltip: compensation for imperfect 90 degree offset phase between I and Q

[XY I DC Offset]
datatype: DOUBLE
unit: V
def_value: 0
group: Sequence
section: Sequence
tooltip: for LO bleedthrough compensation

[XY Q DC Offset]
datatype: DOUBLE
unit: V
def_value: 0
group: Sequence
section: Sequence
tooltip: for LO bleedthrough compensation

[Do Readout?]
datatype: BOOLEAN
def_value: 0
group: Sequence
section: Sequence
show_in_measurement_dlg: False

[Truncation Length]
datatype: DOUBLE
unit: ns
def_value: 0
group: Sequence
section: Sequence
tooltip: length to take out at the end of waveforms

[Z Waveform Delay]
datatype: DOUBLE
unit: ns
def_value: 0
group: Sequence
section: Sequence
tooltip: for when there is a propagation delay between XY pulses and Z pulses

[Make Waveform Multiple of 10ns?]
datatype: BOOLEAN
def_value: 0
group: Sequence
section: Sequence
show_in_measurement_dlg: False

################################ PULSES SECTION


###############PULSE 1
[Pulse 1 Type]
datatype: COMBO
combo_def_1: XY
combo_def_2: Z
combo_def_3: Custom
combo_def_4: Delay
combo_def_5: None
def_value: None
state_quant: Number of Pulses
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
group: Pulse 1
section:Pulses
show_in_measurement_dlg: False


[#1 Shape]
label:Shape
datatype: COMBO
combo_def_1: Square
combo_def_2: Gaussian
def_value: Square
state_quant: Pulse 1 Type
state_value_1: XY
state_value_2: Z
group: Pulse 1
section:Pulses
show_in_measurement_dlg: False


[#1 Num Gaussian Sigma]
label: # of Std Deviations
datatype: DOUBLE
def_value: 3
state_quant: #1 Shape
state_value_1: Gaussian
group: Pulse 1
section: Pulses
tooltip: gaussian pulse is made to fit # of std deviations specified in pulse length


[#1 Square Rise Time]
label: Edge Rise Time
datatype: DOUBLE
unit: ns
def_value: 2
state_quant: #1 Shape
state_value_1: Square
group: Pulse 1
section: Pulses
tooltip: length of LINEAR rising edge incorporated into sequenced waveform


[#1 What control line?]
label: What control line?
datatype: COMBO
combo_def_1: XY
combo_def_2: Z
def_value: Z
state_quant: Pulse 1 Type
state_value_1: Custom
group: Pulse 1
section: Pulses
show_in_measurement_dlg: False


[#1 Length]
label: Length
datatype: DOUBLE
unit: ns
def_value: 30
state_quant: Pulse 1 Type
state_value_1: XY
state_value_2: Z
state_value_3: Delay
group: Pulse 1
section: Pulses


[#1 Amplitude]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1
state_quant: Pulse 1 Type
state_value_1: XY
state_value_2: Z
group: Pulse 1
section: Pulses


[#1 Frequency]
label: Frequency
datatype: DOUBLE
unit: MHz
def_value: 0
state_quant: Pulse 1 Type
state_value_1: XY
state_value_2: Z
state_value_3: Custom
group: Pulse 1
section: Pulses


[#1 Z-Bias]
label: Z-Bias
datatype: DOUBLE
unit: V
def_value: 0
state_quant: Pulse 1 Type
state_value_1: XY
state_value_2: Z
state_value_3: Custom
state_value_4: Delay
group: Pulse 1
section: Pulses


[#1 Phase]
label: Phase
datatype: DOUBLE
unit: degrees
def_value: 0
state_quant: Pulse 1 Type
state_value_1: XY
state_value_2: Z
group: Pulse 1
section: Pulses


[#1 DRAG]
label: Use DRAG
datatype: BOOLEAN
def_value: 0
state_quant: Pulse 1 Type
state_value_1: XY
group: Pulse 1
section: Pulses


[#1 DRAG alpha]
label: Derivative Strength
datatype: DOUBLE
def_value: 0
state_quant: #1 DRAG
state_value_1: 1
group: Pulse 1
section: Pulses


[#1 DRAG delta]
label: Constant Detuning
datatype: DOUBLE
unit: MHz
def_value: 0
state_quant: #1 DRAG
state_value_1: 1
group: Pulse 1
section: Pulses


[#1 Custom Waveform]
datatype: VECTOR
permission: WRITE
state_quant: Pulse 1 Type
state_value_1: Custom
group: Pulse 1
section: Pulses


[#1 Flux Mod?]
label: Flux Mod on Top?
datatype: BOOLEAN
def_value: 0
state_quant: Pulse 1 Type
state_value_1: XY
state_value_2: Z
state_value_3: Custom
state_value_4: Delay
group: Pulse 1
section: Pulses


[#1 Flux Mod Amplitude]
label: Mod Amplitude
datatype: DOUBLE
unit: V
def_value: 0
state_quant: #1 Flux Mod?
state_value_1: 1
group: Pulse 1
section: Pulses


[#1 Flux Mod Frequency]
label: Mod Frequency
datatype: DOUBLE
unit: MHz
def_value: 0
state_quant: #1 Flux Mod?
state_value_1: 1
group: Pulse 1
section: Pulses


###############PULSE 2
[Pulse 2 Type]
datatype: COMBO
combo_def_1: XY
combo_def_2: Z
combo_def_3: Custom
combo_def_4: Delay
combo_def_5: None
def_value: None
state_quant: Number of Pulses
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
group: Pulse 2
section:Pulses
show_in_measurement_dlg: False


[#2 Shape]
label:Shape
datatype: COMBO
combo_def_1: Square
combo_def_2: Gaussian
def_value: Square
state_quant: Pulse 2 Type
state_value_1: XY
state_value_2: Z
group: Pulse 2
section:Pulses
show_in_measurement_dlg: False


[#2 Num Gaussian Sigma]
label: # of Std Deviations
datatype: DOUBLE
def_value: 3
state_quant: #2 Shape
state_value_1: Gaussian
group: Pulse 2
section: Pulses
tooltip: gaussian pulse is made to fit # of std deviations specified in pulse length


[#2 Square Rise Time]
label: Edge Rise Time
datatype: DOUBLE
unit: ns
def_value: 2
state_quant: #2 Shape
state_value_1: Square
group: Pulse 2
section: Pulses
tooltip: length of LINEAR rising edge incorporated into sequenced waveform


[#2 What control line?]
label: What control line?
datatype: COMBO
combo_def_1: XY
combo_def_2: Z
def_value: Z
state_quant: Pulse 2 Type
state_value_1: Custom
group: Pulse 2
section: Pulses
show_in_measurement_dlg: False


[#2 Length]
label: Length
datatype: DOUBLE
unit: ns
def_value: 30
state_quant: Pulse 2 Type
state_value_1: XY
state_value_2: Z
state_value_3: Delay
group: Pulse 2
section: Pulses


[#2 Amplitude]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1
state_quant: Pulse 2 Type
state_value_1: XY
state_value_2: Z
group: Pulse 2
section: Pulses


[#2 Frequency]
label: Frequency
datatype: DOUBLE
unit: MHz
def_value: 0
state_quant: Pulse 2 Type
state_value_1: XY
state_value_2: Z
state_value_3: Custom
group: Pulse 2
section: Pulses


[#2 Z-Bias]
label: Z-Bias
datatype: DOUBLE
unit: V
def_value: 0
state_quant: Pulse 2 Type
state_value_1: XY
state_value_2: Z
state_value_3: Custom
state_value_4: Delay
group: Pulse 2
section: Pulses


[#2 Phase]
label: Phase
datatype: DOUBLE
unit: degrees
def_value: 0
state_quant: Pulse 2 Type
state_value_1: XY
state_value_2: Z
group: Pulse 2
section: Pulses


[#2 DRAG]
label: Use DRAG
datatype: BOOLEAN
def_value: 0
state_quant: Pulse 2 Type
state_value_1: XY
group: Pulse 2
section: Pulses


[#2 DRAG alpha]
label: Derivative Strength
datatype: DOUBLE
def_value: 0
state_quant: #2 DRAG
state_value_1: 1
group: Pulse 2
section: Pulses


[#2 DRAG delta]
label: Constant Detuning
datatype: DOUBLE
unit: MHz
def_value: 0
state_quant: #2 DRAG
state_value_1: 1
group: Pulse 2
section: Pulses


[#2 Custom Waveform]
datatype: VECTOR
permission: WRITE
state_quant: Pulse 2 Type
state_value_1: Custom
group: Pulse 2
section: Pulses


[#2 Flux Mod?]
label: Flux Mod on Top?
datatype: BOOLEAN
def_value: 0
state_quant: Pulse 2 Type
state_value_1: XY
state_value_2: Z
state_value_3: Custom
state_value_4: Delay
group: Pulse 2
section: Pulses


[#2 Flux Mod Amplitude]
label: Mod Amplitude
datatype: DOUBLE
unit: V
def_value: 0
state_quant: #2 Flux Mod?
state_value_1: 1
group: Pulse 2
section: Pulses


[#2 Flux Mod Frequency]
label: Mod Frequency
datatype: DOUBLE
unit: MHz
def_value: 0
state_quant: #2 Flux Mod?
state_value_1: 1
group: Pulse 2
section: Pulses


###############PULSE 3
[Pulse 3 Type]
datatype: COMBO
combo_def_1: XY
combo_def_2: Z
combo_def_3: Custom
combo_def_4: Delay
combo_def_5: None
def_value: None
state_quant: Number of Pulses
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
group: Pulse 3
section:Pulses
show_in_measurement_dlg: False


[#3 Shape]
label:Shape
datatype: COMBO
combo_def_1: Square
combo_def_2: Gaussian
def_value: Square
state_quant: Pulse 3 Type
state_value_1: XY
state_value_2: Z
group: Pulse 3
section:Pulses
show_in_measurement_dlg: False


[#3 Num Gaussian Sigma]
label: # of Std Deviations
datatype: DOUBLE
def_value: 3
state_quant: #3 Shape
state_value_1: Gaussian
group: Pulse 3
section: Pulses
tooltip: gaussian pulse is made to fit # of std deviations specified in pulse length


[#3 Square Rise Time]
label: Edge Rise Time
datatype: DOUBLE
unit: ns
def_value: 2
state_quant: #3 Shape
state_value_1: Square
group: Pulse 3
section: Pulses
tooltip: length of LINEAR rising edge incorporated into sequenced waveform


[#3 What control line?]
label: What control line?
datatype: COMBO
combo_def_1: XY
combo_def_2: Z
def_value: Z
state_quant: Pulse 3 Type
state_value_1: Custom
group: Pulse 3
section: Pulses
show_in_measurement_dlg: False


[#3 Length]
label: Length
datatype: DOUBLE
unit: ns
def_value: 30
state_quant: Pulse 3 Type
state_value_1: XY
state_value_2: Z
state_value_3: Delay
group: Pulse 3
section: Pulses


[#3 Amplitude]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1
state_quant: Pulse 3 Type
state_value_1: XY
state_value_2: Z
group: Pulse 3
section: Pulses


[#3 Frequency]
label: Frequency
datatype: DOUBLE
unit: MHz
def_value: 0
state_quant: Pulse 3 Type
state_value_1: XY
state_value_2: Z
state_value_3: Custom
group: Pulse 3
section: Pulses


[#3 Z-Bias]
label: Z-Bias
datatype: DOUBLE
unit: V
def_value: 0
state_quant: Pulse 3 Type
state_value_1: XY
state_value_2: Z
state_value_3: Custom
state_value_4: Delay
group: Pulse 3
section: Pulses


[#3 Phase]
label: Phase
datatype: DOUBLE
unit: degrees
def_value: 0
state_quant: Pulse 3 Type
state_value_1: XY
state_value_2: Z
group: Pulse 3
section: Pulses


[#3 DRAG]
label: Use DRAG
datatype: BOOLEAN
def_value: 0
state_quant: Pulse 3 Type
state_value_1: XY
group: Pulse 3
section: Pulses


[#3 DRAG alpha]
label: Derivative Strength
datatype: DOUBLE
def_value: 0
state_quant: #3 DRAG
state_value_1: 1
group: Pulse 3
section: Pulses


[#3 DRAG delta]
label: Constant Detuning
datatype: DOUBLE
unit: MHz
def_value: 0
state_quant: #3 DRAG
state_value_1: 1
group: Pulse 3
section: Pulses


[#3 Custom Waveform]
datatype: VECTOR
permission: WRITE
state_quant: Pulse 3 Type
state_value_1: Custom
group: Pulse 3
section: Pulses


[#3 Flux Mod?]
label: Flux Mod on Top?
datatype: BOOLEAN
def_value: 0
state_quant: Pulse 3 Type
state_value_1: XY
state_value_2: Z
state_value_3: Custom
state_value_4: Delay
group: Pulse 3
section: Pulses


[#3 Flux Mod Amplitude]
label: Mod Amplitude
datatype: DOUBLE
unit: V
def_value: 0
state_quant: #3 Flux Mod?
state_value_1: 1
group: Pulse 3
section: Pulses


[#3 Flux Mod Frequency]
label: Mod Frequency
datatype: DOUBLE
unit: MHz
def_value: 0
state_quant: #3 Flux Mod?
state_value_1: 1
group: Pulse 3
section: Pulses


###############PULSE 4
[Pulse 4 Type]
datatype: COMBO
combo_def_1: XY
combo_def_2: Z
combo_def_3: Custom
combo_def_4: Delay
combo_def_5: None
def_value: None
state_quant: Number of Pulses
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
state_value_6: 9
group: Pulse 4
section:Pulses
show_in_measurement_dlg: False


[#4 Shape]
label:Shape
datatype: COMBO
combo_def_1: Square
combo_def_2: Gaussian
def_value: Square
state_quant: Pulse 4 Type
state_value_1: XY
state_value_2: Z
group: Pulse 4
section:Pulses
show_in_measurement_dlg: False


[#4 Num Gaussian Sigma]
label: # of Std Deviations
datatype: DOUBLE
def_value: 3
state_quant: #4 Shape
state_value_1: Gaussian
group: Pulse 4
section: Pulses
tooltip: gaussian pulse is made to fit # of std deviations specified in pulse length


[#4 Square Rise Time]
label: Edge Rise Time
datatype: DOUBLE
unit: ns
def_value: 2
state_quant: #4 Shape
state_value_1: Square
group: Pulse 4
section: Pulses
tooltip: length of LINEAR rising edge incorporated into sequenced waveform


[#4 What control line?]
label: What control line?
datatype: COMBO
combo_def_1: XY
combo_def_2: Z
def_value: Z
state_quant: Pulse 4 Type
state_value_1: Custom
group: Pulse 4
section: Pulses
show_in_measurement_dlg: False


[#4 Length]
label: Length
datatype: DOUBLE
unit: ns
def_value: 30
state_quant: Pulse 4 Type
state_value_1: XY
state_value_2: Z
state_value_3: Delay
group: Pulse 4
section: Pulses


[#4 Amplitude]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1
state_quant: Pulse 4 Type
state_value_1: XY
state_value_2: Z
group: Pulse 4
section: Pulses


[#4 Frequency]
label: Frequency
datatype: DOUBLE
unit: MHz
def_value: 0
state_quant: Pulse 4 Type
state_value_1: XY
state_value_2: Z
state_value_3: Custom
group: Pulse 4
section: Pulses


[#4 Z-Bias]
label: Z-Bias
datatype: DOUBLE
unit: V
def_value: 0
state_quant: Pulse 4 Type
state_value_1: XY
state_value_2: Z
state_value_3: Custom
state_value_4: Delay
group: Pulse 4
section: Pulses


[#4 Phase]
label: Phase
datatype: DOUBLE
unit: degrees
def_value: 0
state_quant: Pulse 4 Type
state_value_1: XY
state_value_2: Z
group: Pulse 4
section: Pulses


[#4 DRAG]
label: Use DRAG
datatype: BOOLEAN
def_value: 0
state_quant: Pulse 4 Type
state_value_1: XY
group: Pulse 4
section: Pulses


[#4 DRAG alpha]
label: Derivative Strength
datatype: DOUBLE
def_value: 0
state_quant: #4 DRAG
state_value_1: 1
group: Pulse 4
section: Pulses


[#4 DRAG delta]
label: Constant Detuning
datatype: DOUBLE
unit: MHz
def_value: 0
state_quant: #4 DRAG
state_value_1: 1
group: Pulse 4
section: Pulses


[#4 Custom Waveform]
datatype: VECTOR
permission: WRITE
state_quant: Pulse 4 Type
state_value_1: Custom
group: Pulse 4
section: Pulses


[#4 Flux Mod?]
label: Flux Mod on Top?
datatype: BOOLEAN
def_value: 0
state_quant: Pulse 4 Type
state_value_1: XY
state_value_2: Z
state_value_3: Custom
state_value_4: Delay
group: Pulse 4
section: Pulses


[#4 Flux Mod Amplitude]
label: Mod Amplitude
datatype: DOUBLE
unit: V
def_value: 0
state_quant: #4 Flux Mod?
state_value_1: 1
group: Pulse 4
section: Pulses


[#4 Flux Mod Frequency]
label: Mod Frequency
datatype: DOUBLE
unit: MHz
def_value: 0
state_quant: #4 Flux Mod?
state_value_1: 1
group: Pulse 4
section: Pulses


###############PULSE 5
[Pulse 5 Type]
datatype: COMBO
combo_def_1: XY
combo_def_2: Z
combo_def_3: Custom
combo_def_4: Delay
combo_def_5: None
def_value: None
state_quant: Number of Pulses
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
state_value_5: 9
group: Pulse 5
section:Pulses
show_in_measurement_dlg: False


[#5 Shape]
label:Shape
datatype: COMBO
combo_def_1: Square
combo_def_2: Gaussian
def_value: Square
state_quant: Pulse 5 Type
state_value_1: XY
state_value_2: Z
group: Pulse 5
section:Pulses
show_in_measurement_dlg: False


[#5 Num Gaussian Sigma]
label: # of Std Deviations
datatype: DOUBLE
def_value: 3
state_quant: #5 Shape
state_value_1: Gaussian
group: Pulse 5
section: Pulses
tooltip: gaussian pulse is made to fit # of std deviations specified in pulse length


[#5 Square Rise Time]
label: Edge Rise Time
datatype: DOUBLE
unit: ns
def_value: 2
state_quant: #5 Shape
state_value_1: Square
group: Pulse 5
section: Pulses
tooltip: length of LINEAR rising edge incorporated into sequenced waveform


[#5 What control line?]
label: What control line?
datatype: COMBO
combo_def_1: XY
combo_def_2: Z
def_value: Z
state_quant: Pulse 5 Type
state_value_1: Custom
group: Pulse 5
section: Pulses
show_in_measurement_dlg: False


[#5 Length]
label: Length
datatype: DOUBLE
unit: ns
def_value: 30
state_quant: Pulse 5 Type
state_value_1: XY
state_value_2: Z
state_value_3: Delay
group: Pulse 5
section: Pulses


[#5 Amplitude]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1
state_quant: Pulse 5 Type
state_value_1: XY
state_value_2: Z
group: Pulse 5
section: Pulses


[#5 Frequency]
label: Frequency
datatype: DOUBLE
unit: MHz
def_value: 0
state_quant: Pulse 5 Type
state_value_1: XY
state_value_2: Z
state_value_3: Custom
group: Pulse 5
section: Pulses


[#5 Z-Bias]
label: Z-Bias
datatype: DOUBLE
unit: V
def_value: 0
state_quant: Pulse 5 Type
state_value_1: XY
state_value_2: Z
state_value_3: Custom
state_value_4: Delay
group: Pulse 5
section: Pulses


[#5 Phase]
label: Phase
datatype: DOUBLE
unit: degrees
def_value: 0
state_quant: Pulse 5 Type
state_value_1: XY
state_value_2: Z
group: Pulse 5
section: Pulses


[#5 DRAG]
label: Use DRAG
datatype: BOOLEAN
def_value: 0
state_quant: Pulse 5 Type
state_value_1: XY
group: Pulse 5
section: Pulses


[#5 DRAG alpha]
label: Derivative Strength
datatype: DOUBLE
def_value: 0
state_quant: #5 DRAG
state_value_1: 1
group: Pulse 5
section: Pulses


[#5 DRAG delta]
label: Constant Detuning
datatype: DOUBLE
unit: MHz
def_value: 0
state_quant: #5 DRAG
state_value_1: 1
group: Pulse 5
section: Pulses


[#5 Custom Waveform]
datatype: VECTOR
permission: WRITE
state_quant: Pulse 5 Type
state_value_1: Custom
group: Pulse 5
section: Pulses


[#5 Flux Mod?]
label: Flux Mod on Top?
datatype: BOOLEAN
def_value: 0
state_quant: Pulse 5 Type
state_value_1: XY
state_value_2: Z
state_value_3: Custom
state_value_4: Delay
group: Pulse 5
section: Pulses


[#5 Flux Mod Amplitude]
label: Mod Amplitude
datatype: DOUBLE
unit: V
def_value: 0
state_quant: #5 Flux Mod?
state_value_1: 1
group: Pulse 5
section: Pulses


[#5 Flux Mod Frequency]
label: Mod Frequency
datatype: DOUBLE
unit: MHz
def_value: 0
state_quant: #5 Flux Mod?
state_value_1: 1
group: Pulse 5
section: Pulses


###############PULSE 6
[Pulse 6 Type]
datatype: COMBO
combo_def_1: XY
combo_def_2: Z
combo_def_3: Custom
combo_def_4: Delay
combo_def_5: None
def_value: None
state_quant: Number of Pulses
state_value_1: 6
state_value_2: 7
state_value_3: 8
state_value_4: 9
group: Pulse 6
section:Pulses
show_in_measurement_dlg: False


[#6 Shape]
label:Shape
datatype: COMBO
combo_def_1: Square
combo_def_2: Gaussian
def_value: Square
state_quant: Pulse 6 Type
state_value_1: XY
state_value_2: Z
group: Pulse 6
section:Pulses
show_in_measurement_dlg: False


[#6 Num Gaussian Sigma]
label: # of Std Deviations
datatype: DOUBLE
def_value: 3
state_quant: #6 Shape
state_value_1: Gaussian
group: Pulse 6
section: Pulses
tooltip: gaussian pulse is made to fit # of std deviations specified in pulse length


[#6 Square Rise Time]
label: Edge Rise Time
datatype: DOUBLE
unit: ns
def_value: 2
state_quant: #6 Shape
state_value_1: Square
group: Pulse 6
section: Pulses
tooltip: length of LINEAR rising edge incorporated into sequenced waveform


[#6 What control line?]
label: What control line?
datatype: COMBO
combo_def_1: XY
combo_def_2: Z
def_value: Z
state_quant: Pulse 6 Type
state_value_1: Custom
group: Pulse 6
section: Pulses
show_in_measurement_dlg: False


[#6 Length]
label: Length
datatype: DOUBLE
unit: ns
def_value: 30
state_quant: Pulse 6 Type
state_value_1: XY
state_value_2: Z
state_value_3: Delay
group: Pulse 6
section: Pulses


[#6 Amplitude]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1
state_quant: Pulse 6 Type
state_value_1: XY
state_value_2: Z
group: Pulse 6
section: Pulses


[#6 Frequency]
label: Frequency
datatype: DOUBLE
unit: MHz
def_value: 0
state_quant: Pulse 6 Type
state_value_1: XY
state_value_2: Z
state_value_3: Custom
group: Pulse 6
section: Pulses


[#6 Z-Bias]
label: Z-Bias
datatype: DOUBLE
unit: V
def_value: 0
state_quant: Pulse 6 Type
state_value_1: XY
state_value_2: Z
state_value_3: Custom
state_value_4: Delay
group: Pulse 6
section: Pulses


[#6 Phase]
label: Phase
datatype: DOUBLE
unit: degrees
def_value: 0
state_quant: Pulse 6 Type
state_value_1: XY
state_value_2: Z
group: Pulse 6
section: Pulses


[#6 DRAG]
label: Use DRAG
datatype: BOOLEAN
def_value: 0
state_quant: Pulse 6 Type
state_value_1: XY
group: Pulse 6
section: Pulses


[#6 DRAG alpha]
label: Derivative Strength
datatype: DOUBLE
def_value: 0
state_quant: #6 DRAG
state_value_1: 1
group: Pulse 6
section: Pulses


[#6 DRAG delta]
label: Constant Detuning
datatype: DOUBLE
unit: MHz
def_value: 0
state_quant: #6 DRAG
state_value_1: 1
group: Pulse 6
section: Pulses


[#6 Custom Waveform]
datatype: VECTOR
permission: WRITE
state_quant: Pulse 6 Type
state_value_1: Custom
group: Pulse 6
section: Pulses


[#6 Flux Mod?]
label: Flux Mod on Top?
datatype: BOOLEAN
def_value: 0
state_quant: Pulse 6 Type
state_value_1: XY
state_value_2: Z
state_value_3: Custom
state_value_4: Delay
group: Pulse 6
section: Pulses


[#6 Flux Mod Amplitude]
label: Mod Amplitude
datatype: DOUBLE
unit: V
def_value: 0
state_quant: #6 Flux Mod?
state_value_1: 1
group: Pulse 6
section: Pulses


[#6 Flux Mod Frequency]
label: Mod Frequency
datatype: DOUBLE
unit: MHz
def_value: 0
state_quant: #6 Flux Mod?
state_value_1: 1
group: Pulse 6
section: Pulses


###############PULSE 7
[Pulse 7 Type]
datatype: COMBO
combo_def_1: XY
combo_def_2: Z
combo_def_3: Custom
combo_def_4: Delay
combo_def_5: None
def_value: None
state_quant: Number of Pulses
state_value_1: 7
state_value_2: 8
state_value_3: 9
group: Pulse 7
section:Pulses
show_in_measurement_dlg: False


[#7 Shape]
label:Shape
datatype: COMBO
combo_def_1: Square
combo_def_2: Gaussian
def_value: Square
state_quant: Pulse 7 Type
state_value_1: XY
state_value_2: Z
group: Pulse 7
section:Pulses
show_in_measurement_dlg: False


[#7 Num Gaussian Sigma]
label: # of Std Deviations
datatype: DOUBLE
def_value: 3
state_quant: #7 Shape
state_value_1: Gaussian
group: Pulse 7
section: Pulses
tooltip: gaussian pulse is made to fit # of std deviations specified in pulse length


[#7 Square Rise Time]
label: Edge Rise Time
datatype: DOUBLE
unit: ns
def_value: 2
state_quant: #7 Shape
state_value_1: Square
group: Pulse 7
section: Pulses
tooltip: length of LINEAR rising edge incorporated into sequenced waveform


[#7 What control line?]
label: What control line?
datatype: COMBO
combo_def_1: XY
combo_def_2: Z
def_value: Z
state_quant: Pulse 7 Type
state_value_1: Custom
group: Pulse 7
section: Pulses
show_in_measurement_dlg: False


[#7 Length]
label: Length
datatype: DOUBLE
unit: ns
def_value: 30
state_quant: Pulse 7 Type
state_value_1: XY
state_value_2: Z
state_value_3: Delay
group: Pulse 7
section: Pulses


[#7 Amplitude]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1
state_quant: Pulse 7 Type
state_value_1: XY
state_value_2: Z
group: Pulse 7
section: Pulses


[#7 Frequency]
label: Frequency
datatype: DOUBLE
unit: MHz
def_value: 0
state_quant: Pulse 7 Type
state_value_1: XY
state_value_2: Z
state_value_3: Custom
group: Pulse 7
section: Pulses


[#7 Z-Bias]
label: Z-Bias
datatype: DOUBLE
unit: V
def_value: 0
state_quant: Pulse 7 Type
state_value_1: XY
state_value_2: Z
state_value_3: Custom
state_value_4: Delay
group: Pulse 7
section: Pulses


[#7 Phase]
label: Phase
datatype: DOUBLE
unit: degrees
def_value: 0
state_quant: Pulse 7 Type
state_value_1: XY
state_value_2: Z
group: Pulse 7
section: Pulses


[#7 DRAG]
label: Use DRAG
datatype: BOOLEAN
def_value: 0
state_quant: Pulse 7 Type
state_value_1: XY
group: Pulse 7
section: Pulses


[#7 DRAG alpha]
label: Derivative Strength
datatype: DOUBLE
def_value: 0
state_quant: #7 DRAG
state_value_1: 1
group: Pulse 7
section: Pulses


[#7 DRAG delta]
label: Constant Detuning
datatype: DOUBLE
unit: MHz
def_value: 0
state_quant: #7 DRAG
state_value_1: 1
group: Pulse 7
section: Pulses


[#7 Custom Waveform]
datatype: VECTOR
permission: WRITE
state_quant: Pulse 7 Type
state_value_1: Custom
group: Pulse 7
section: Pulses


[#7 Flux Mod?]
label: Flux Mod on Top?
datatype: BOOLEAN
def_value: 0
state_quant: Pulse 7 Type
state_value_1: XY
state_value_2: Z
state_value_3: Custom
state_value_4: Delay
group: Pulse 7
section: Pulses


[#7 Flux Mod Amplitude]
label: Mod Amplitude
datatype: DOUBLE
unit: V
def_value: 0
state_quant: #7 Flux Mod?
state_value_1: 1
group: Pulse 7
section: Pulses


[#7 Flux Mod Frequency]
label: Mod Frequency
datatype: DOUBLE
unit: MHz
def_value: 0
state_quant: #7 Flux Mod?
state_value_1: 1
group: Pulse 7
section: Pulses


###############PULSE 8
[Pulse 8 Type]
datatype: COMBO
combo_def_1: XY
combo_def_2: Z
combo_def_3: Custom
combo_def_4: Delay
combo_def_5: None
def_value: None
state_quant: Number of Pulses
state_value_1: 8
state_value_2: 9
group: Pulse 8
section:Pulses
show_in_measurement_dlg: False


[#8 Shape]
label:Shape
datatype: COMBO
combo_def_1: Square
combo_def_2: Gaussian
def_value: Square
state_quant: Pulse 8 Type
state_value_1: XY
state_value_2: Z
group: Pulse 8
section:Pulses
show_in_measurement_dlg: False


[#8 Num Gaussian Sigma]
label: # of Std Deviations
datatype: DOUBLE
def_value: 3
state_quant: #8 Shape
state_value_1: Gaussian
group: Pulse 8
section: Pulses
tooltip: gaussian pulse is made to fit # of std deviations specified in pulse length


[#8 Square Rise Time]
label: Edge Rise Time
datatype: DOUBLE
unit: ns
def_value: 2
state_quant: #8 Shape
state_value_1: Square
group: Pulse 8
section: Pulses
tooltip: length of LINEAR rising edge incorporated into sequenced waveform


[#8 What control line?]
label: What control line?
datatype: COMBO
combo_def_1: XY
combo_def_2: Z
def_value: Z
state_quant: Pulse 8 Type
state_value_1: Custom
group: Pulse 8
section: Pulses
show_in_measurement_dlg: False


[#8 Length]
label: Length
datatype: DOUBLE
unit: ns
def_value: 30
state_quant: Pulse 8 Type
state_value_1: XY
state_value_2: Z
state_value_3: Delay
group: Pulse 8
section: Pulses


[#8 Amplitude]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1
state_quant: Pulse 8 Type
state_value_1: XY
state_value_2: Z
group: Pulse 8
section: Pulses


[#8 Frequency]
label: Frequency
datatype: DOUBLE
unit: MHz
def_value: 0
state_quant: Pulse 8 Type
state_value_1: XY
state_value_2: Z
state_value_3: Custom
group: Pulse 8
section: Pulses


[#8 Z-Bias]
label: Z-Bias
datatype: DOUBLE
unit: V
def_value: 0
state_quant: Pulse 8 Type
state_value_1: XY
state_value_2: Z
state_value_3: Custom
state_value_4: Delay
group: Pulse 8
section: Pulses


[#8 Phase]
label: Phase
datatype: DOUBLE
unit: degrees
def_value: 0
state_quant: Pulse 8 Type
state_value_1: XY
state_value_2: Z
group: Pulse 8
section: Pulses


[#8 DRAG]
label: Use DRAG
datatype: BOOLEAN
def_value: 0
state_quant: Pulse 8 Type
state_value_1: XY
group: Pulse 8
section: Pulses


[#8 DRAG alpha]
label: Derivative Strength
datatype: DOUBLE
def_value: 0
state_quant: #8 DRAG
state_value_1: 1
group: Pulse 8
section: Pulses


[#8 DRAG delta]
label: Constant Detuning
datatype: DOUBLE
unit: MHz
def_value: 0
state_quant: #8 DRAG
state_value_1: 1
group: Pulse 8
section: Pulses


[#8 Custom Waveform]
datatype: VECTOR
permission: WRITE
state_quant: Pulse 8 Type
state_value_1: Custom
group: Pulse 8
section: Pulses


[#8 Flux Mod?]
label: Flux Mod on Top?
datatype: BOOLEAN
def_value: 0
state_quant: Pulse 8 Type
state_value_1: XY
state_value_2: Z
state_value_3: Custom
state_value_4: Delay
group: Pulse 8
section: Pulses


[#8 Flux Mod Amplitude]
label: Mod Amplitude
datatype: DOUBLE
unit: V
def_value: 0
state_quant: #8 Flux Mod?
state_value_1: 1
group: Pulse 8
section: Pulses


[#8 Flux Mod Frequency]
label: Mod Frequency
datatype: DOUBLE
unit: MHz
def_value: 0
state_quant: #8 Flux Mod?
state_value_1: 1
group: Pulse 8
section: Pulses


###############PULSE 9
[Pulse 9 Type]
datatype: COMBO
combo_def_1: XY
combo_def_2: Z
combo_def_3: Custom
combo_def_4: Delay
combo_def_5: None
def_value: None
state_quant: Number of Pulses
state_value_1: 9
group: Pulse 9
section:Pulses
show_in_measurement_dlg: False


[#9 Shape]
label:Shape
datatype: COMBO
combo_def_1: Square
combo_def_2: Gaussian
def_value: Square
state_quant: Pulse 9 Type
state_value_1: XY
state_value_2: Z
group: Pulse 9
section:Pulses
show_in_measurement_dlg: False


[#9 Num Gaussian Sigma]
label: # of Std Deviations
datatype: DOUBLE
def_value: 3
state_quant: #9 Shape
state_value_1: Gaussian
group: Pulse 9
section: Pulses
tooltip: gaussian pulse is made to fit # of std deviations specified in pulse length


[#9 Square Rise Time]
label: Edge Rise Time
datatype: DOUBLE
unit: ns
def_value: 2
state_quant: #9 Shape
state_value_1: Square
group: Pulse 9
section: Pulses
tooltip: length of LINEAR rising edge incorporated into sequenced waveform


[#9 What control line?]
label: What control line?
datatype: COMBO
combo_def_1: XY
combo_def_2: Z
def_value: Z
state_quant: Pulse 9 Type
state_value_1: Custom
group: Pulse 9
section: Pulses
show_in_measurement_dlg: False


[#9 Length]
label: Length
datatype: DOUBLE
unit: ns
def_value: 30
state_quant: Pulse 9 Type
state_value_1: XY
state_value_2: Z
state_value_3: Delay
group: Pulse 9
section: Pulses


[#9 Amplitude]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1
state_quant: Pulse 9 Type
state_value_1: XY
state_value_2: Z
group: Pulse 9
section: Pulses


[#9 Frequency]
label: Frequency
datatype: DOUBLE
unit: MHz
def_value: 0
state_quant: Pulse 9 Type
state_value_1: XY
state_value_2: Z
state_value_3: Custom
group: Pulse 9
section: Pulses


[#9 Z-Bias]
label: Z-Bias
datatype: DOUBLE
unit: V
def_value: 0
state_quant: Pulse 9 Type
state_value_1: XY
state_value_2: Z
state_value_3: Custom
state_value_4: Delay
group: Pulse 9
section: Pulses


[#9 Phase]
label: Phase
datatype: DOUBLE
unit: degrees
def_value: 0
state_quant: Pulse 9 Type
state_value_1: XY
state_value_2: Z
group: Pulse 9
section: Pulses


[#9 DRAG]
label: Use DRAG
datatype: BOOLEAN
def_value: 0
state_quant: Pulse 9 Type
state_value_1: XY
group: Pulse 9
section: Pulses


[#9 DRAG alpha]
label: Derivative Strength
datatype: DOUBLE
def_value: 0
state_quant: #9 DRAG
state_value_1: 1
group: Pulse 9
section: Pulses


[#9 DRAG delta]
label: Constant Detuning
datatype: DOUBLE
unit: MHz
def_value: 0
state_quant: #9 DRAG
state_value_1: 1
group: Pulse 9
section: Pulses


[#9 Custom Waveform]
datatype: VECTOR
permission: WRITE
state_quant: Pulse 9 Type
state_value_1: Custom
group: Pulse 9
section: Pulses


[#9 Flux Mod?]
label: Flux Mod on Top?
datatype: BOOLEAN
def_value: 0
state_quant: Pulse 9 Type
state_value_1: XY
state_value_2: Z
state_value_3: Custom
state_value_4: Delay
group: Pulse 9
section: Pulses


[#9 Flux Mod Amplitude]
label: Mod Amplitude
datatype: DOUBLE
unit: V
def_value: 0
state_quant: #9 Flux Mod?
state_value_1: 1
group: Pulse 9
section: Pulses


[#9 Flux Mod Frequency]
label: Mod Frequency
datatype: DOUBLE
unit: MHz
def_value: 0
state_quant: #9 Flux Mod?
state_value_1: 1
group: Pulse 9
section: Pulses

################################# READOUT SECTION
[Number of Qubits]
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
def_value: 1
state_quant: Do Readout?
state_value_1: 1
group: Readout
section: Readout

[Readout Shape]
label: Shape
datatype: COMBO
combo_def_1: Square
combo_def_2: Read_fast
def_value: Square
state_quant: Do Readout?
state_value_1: 1
group: Readout
section: Readout

[Readout Length]
datatype: DOUBLE
unit: ns
def_value: 100
state_quant: Do Readout?
state_value_1: 1
group: Readout
section: Readout

[Readout Amplitude]
datatype: DOUBLE
unit: V
def_value: 0.6
state_quant: Do Readout?
state_value_1: 1
group: Readout
section: Readout


[Readout Frequency #1]
datatype: DOUBLE
unit: MHz
def_value: 100
state_quant: Number of Qubits
state_value_1: 1
state_value_2: 2
group: Readout
section: Readout


[Readout Frequency #2]
datatype: DOUBLE
unit: MHz
def_value: 100
state_quant: Number of Qubits
state_value_1: 2
group: Readout
section: Readout


[Readout Phase #1]
datatype: DOUBLE
unit: degrees
def_value: 0
state_quant: Number of Qubits
state_value_1: 1
state_value_2: 2
group: Readout
section: Readout


[Readout Phase #2]
datatype: DOUBLE
unit: degrees
def_value: 0
state_quant: Number of Qubits
state_value_1: 2
group: Readout
section: Readout
[Readout I/Q Ratio]
datatype: DOUBLE
def_value: 1
state_quant: Do Readout?
state_value_1: 1
group: Readout
section: Readout
tooltip: ratio of IQ voltages to compensate for mixer arm imbalance

[Readout I/Q Phase Skew]
datatype: DOUBLE
unit: degrees
def_value: 0
state_quant: Do Readout?
state_value_1: 1
group: Readout
section: Readout
tooltip: compensation for imperfect 90 degree offset phase between I and Q

[Readout I DC Offset]
datatype: DOUBLE
unit: V
def_value: 0
state_quant: Do Readout?
state_value_1: 1
group: Readout
section: Readout
tooltip: for LO bleedthrough compensation

[Readout Q DC Offset]
datatype: DOUBLE
unit: V
def_value: 0
state_quant: Do Readout?
state_value_1: 1
group: Readout
section: Readout
tooltip: for LO bleedthrough compensation

[Readout Z-Bias]
label: Z-Bias
datatype: DOUBLE
unit: V
def_value: 0
state_quant: Do Readout?
state_value_1: 1
group: Readout
section: Readout

[Generate Readout Trig?]
datatype: BOOLEAN
def_value: 0
state_quant: Do Readout?
state_value_1: 1
group: Readout
section: Readout

[Readout Trig Amplitude]
datatype: DOUBLE
unit: V
def_value: 1
state_quant: Generate Readout Trig?
state_value_1: 1
group: Readout
section: Readout

[Readout Trig Duration]
datatype: DOUBLE
unit: ns
def_value: 50
state_quant: Generate Readout Trig?
state_value_1: 1
group: Readout
section: Readout

[Do Heralding?]
datatype: BOOLEAN
def_value: 0
state_quant: Do Readout?
state_value_1: 1
group: Readout
section: Readout

[Delay After Heralding Pulse]
datatype: DOUBLE
unit: ns
def_value: 100
state_quant: Do Heralding?
state_value_1: 1
group: Readout
section: Readout


################# WAVEFORM OUTPUTS

[Waveform XY - I]
datatype: VECTOR
permission: READ
x_name: Time
x_unit: s

[Waveform XY - Q]
datatype: VECTOR
permission: READ
x_name: Time
x_unit: s

[Waveform Z]
datatype: VECTOR
permission: READ
x_name: Time
x_unit: s

[Waveform Readout - I]
datatype: VECTOR
permission: READ
x_name: Time
x_unit: s
state_quant: Do Readout?
state_value_1: 1


[Waveform Readout - Q]
datatype: VECTOR
permission: READ
x_name: Time
x_unit: s
state_quant: Do Readout?
state_value_1: 1

[Waveform Readout Trig]
datatype: VECTOR
permission: READ
x_name: Time
x_unit: s
state_quant: Generate Readout Trig?
state_value_1: 1

#################Demodulation

[Demodulation - Skip]
label: Skip start
datatype: DOUBLE
def_value: 0.0
unit: ns
state_quant: Do Readout?
state_value: 1
section: Demodulation
group: Demodulation

[Demodulation - Number of Samples]
label: Number of Samples
datatype: DOUBLE
def_value: 100
state_quant: Do Readout?
state_value: 1
section: Demodulation
group: Demodulation
tooltip: Making this an explicit input so that there is no errors due to rounding of lengths or missed triggers

[Demodulation - Input I]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
state_quant: Do Readout?
state_value: 1
section: Demodulation
group: Demodulation
show_in_measurement_dlg: True

[Demodulation - Input Q]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
state_quant: Do Readout?
state_value: 1
section: Demodulation
group: Demodulation
show_in_measurement_dlg: True

[Demodulation - Input Ref]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
state_quant: Do Readout?
state_value: 1
section: Demodulation
group: Demodulation
show_in_measurement_dlg: True


[QB1 Voltage]
unit: V
datatype: VECTOR_COMPLEX
permission: READ
state_quant: Number of Qubits
state_value_1: 1
state_value_2: 2
group: Demodulation
section : Demodulation


[QB1 Voltage Avg]
unit: V
datatype: COMPLEX
permission: READ
state_quant: Number of Qubits
state_value_1: 1
state_value_2: 2
group: Demodulation
section: Demodulation


[QB2 Voltage]
unit: V
datatype: VECTOR_COMPLEX
permission: READ
state_quant: Number of Qubits
state_value_1: 2
group: Demodulation
section : Demodulation


[QB2 Voltage Avg]
unit: V
datatype: COMPLEX
permission: READ
state_quant: Number of Qubits
state_value_1: 2
group: Demodulation
section: Demodulation
