# Instrument driver configuration file

[General settings]

# The name is shown in all the configuration windows
name: Painter Attocube Motion Controller

# The version string should be updated whenever changes are made to this config file
version: 0.0

# Name of folder containing the code defining a custom driver driver_path
driver_path: Painter_Attocube_MotionController



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
[Axis 1 - Output Enable]
label: Output Enable
datatype: BOOLEAN
def_value: True
group: Manual Positioning
section: Axis 1

[Axis 1 - Amplitude]
label: Amplitude
datatype: DOUBLE
unit: V
low_lim: 0
high_lim: 70
def_value: 0.0
group: Manual Positioning
section: Axis 1

[Axis 1 - Step Width]
label: Step width
datatype: DOUBLE
unit: um
group: Manual Positioning
permission: READ
section: Axis 1

[Axis 1 - Speed]
label: Speed
datatype: DOUBLE
unit: um/s
group: Manual Positioning
permission: READ
section: Axis 1

[Axis 1 - DC Level]
label: DC Level
datatype: DOUBLE
unit: V
def_value: 0.0
group: Manual Positioning
section: Axis 1

[Axis 1 - Frequency]
label: Frequency
datatype: DOUBLE
unit: Hz
def_value: 1
low_lim: 1
high_lim: 2000
group: Manual Positioning
section: Axis 1

[Axis 1 - Single Step]
label: Single Step
datatype: COMBO
def_value: Forward
combo_def_1: Forward
combo_def_2: Backward
cmd_def_1: 0
cmd_def_2: 1
state_quant: Axis 1 - Output Enable
state_value_1: True
group: Move
section: Axis 1

[Axis 1 - Capacitance]
label: Capacitance
datatype: DOUBLE
unit: F
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
group: Capacitance
section: Axis 1

[Axis 1 - Position]
label: Position
datatype: DOUBLE
unit: m
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
group: Position
section: Axis 1
