# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Painter Downsampler

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Painter_Downsampler

# Define that this driver is a signal generator without hardware communication
signal_generator: True
signal_analyzer: True


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
# Number of Traces
[Number of Traces to Downsample]
datatype: COMBO
group: Settings
section: Sample Rate
combo_def_1: One
combo_def_2: Two
combo_def_3: Three
combo_def_4: Four
combo_def_5: Five
combo_def_6: Six
combo_def_7: Seven
combo_def_8: Eight

# Sample Rate - Input
[Uniform Input Sample Rate]
datatype: BOOLEAN
def_value: 1
group: Input
section: Sample Rate

[Sample Rate - Input]
label: Sample Rate
state_quant: Uniform Input Sample Rate
state_value_1: 1
datatype: DOUBLE
def_value: 1.0E9
unit: Hz
group: Input
section: Sample Rate
show_in_measurement_dlg: True


[Sample Rate - Input #1]
label: Sample Rate #1
state_quant: Uniform Input Sample Rate
state_value_1: 0
datatype: DOUBLE
def_value: 1.0E9
unit: Hz
group: Input
section: Sample Rate
show_in_measurement_dlg: True

[Sample Rate - Input #2]
label: Sample Rate #2
state_quant: Uniform Input Sample Rate
state_value_1: 0
datatype: DOUBLE
def_value: 1.0E9
unit: Hz
group: Input
section: Sample Rate

[Sample Rate - Input #3]
label: Sample Rate #3
state_quant: Uniform Input Sample Rate
state_value_1: 0
datatype: DOUBLE
def_value: 1.0E9
unit: Hz
group: Input
section: Sample Rate

[Sample Rate - Input #4]
label: Sample Rate #4
state_quant: Uniform Input Sample Rate
state_value_1: 0
datatype: DOUBLE
def_value: 1.0E9
unit: Hz
group: Input
section: Sample Rate

[Sample Rate - Input #5]
label: Sample Rate #5
state_quant: Uniform Input Sample Rate
state_value_1: 0
datatype: DOUBLE
def_value: 1.0E9
unit: Hz
group: Input
section: Sample Rate

[Sample Rate - Input #6]
label: Sample Rate #6
state_quant: Uniform Input Sample Rate
state_value_1: 0
datatype: DOUBLE
def_value: 1.0E9
unit: Hz
group: Input
section: Sample Rate

[Sample Rate - Input #7]
label: Sample Rate #7
state_quant: Uniform Input Sample Rate
state_value_1: 0
datatype: DOUBLE
def_value: 1.0E9
unit: Hz
group: Input
section: Sample Rate

[Sample Rate - Input #8]
label: Sample Rate #8
state_quant: Uniform Input Sample Rate
state_value_1: 0
datatype: DOUBLE
def_value: 1.0E9
unit: Hz
group: Input
section: Sample Rate


# Sample Rate - Output
[Uniform Output Sample Rate]
datatype: BOOLEAN
def_value: 1
group: Output
section: Sample Rate

[Sample Rate - Output]
label: Sample Rate
state_quant: Uniform Output Sample Rate
state_value_1: 1
datatype: DOUBLE
def_value: 0.5E9
unit: Hz
group: Output
section: Sample Rate
show_in_measurement_dlg: True

[Sample Rate - Output #1]
label: Sample Rate #1
state_quant: Uniform Output Sample Rate
state_value_1: 0
datatype: DOUBLE
def_value: 0.5E9
unit: Hz
group: Output
section: Sample Rate
show_in_measurement_dlg: True

[Sample Rate - Output #2]
label: Sample Rate #2
state_quant: Uniform Output Sample Rate
state_value_1: 0
datatype: DOUBLE
def_value: 0.5E9
unit: Hz
group: Output
section: Sample Rate

[Sample Rate - Output #3]
label: Sample Rate #3
state_quant: Uniform Output Sample Rate
state_value_1: 0
datatype: DOUBLE
def_value: 0.5E9
unit: Hz
group: Output
section: Sample Rate

[Sample Rate - Output #4]
label: Sample Rate #4
state_quant: Uniform Output Sample Rate
state_value_1: 0
datatype: DOUBLE
def_value: 0.5E9
unit: Hz
group: Output
section: Sample Rate

[Sample Rate - Output #5]
label: Sample Rate #5
state_quant: Uniform Output Sample Rate
state_value_1: 0
datatype: DOUBLE
def_value: 0.5E9
unit: Hz
group: Output
section: Sample Rate
show_in_measurement_dlg: True

[Sample Rate - Output #6]
label: Sample Rate #6
state_quant: Uniform Output Sample Rate
state_value_1: 0
datatype: DOUBLE
def_value: 0.5E9
unit: Hz
group: Output
section: Sample Rate
show_in_measurement_dlg: True

[Sample Rate - Output #7]
label: Sample Rate #7
state_quant: Uniform Output Sample Rate
state_value_1: 0
datatype: DOUBLE
def_value: 0.5E9
unit: Hz
group: Output
section: Sample Rate

[Sample Rate - Output #8]
label: Sample Rate #8
state_quant: Uniform Output Sample Rate
state_value_1: 0
datatype: DOUBLE
def_value: 0.5E9
unit: Hz
group: Output
section: Sample Rate

# Input Trace
[Input Trace #1]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
section: Input
group: Traces
show_in_measurement_dlg: True

[Input Trace #2]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
section: Input
group: Traces
state_quant: Number of Traces to Downsample
state_value_1: Eight
state_value_2: Seven
state_value_3: Six
state_value_4: Five
state_value_5: Four
state_value_6: Three
state_value_7: Two
show_in_measurement_dlg: True

[Input Trace #3]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
section: Input
group: Traces
state_quant: Number of Traces to Downsample
state_value_1: Eight
state_value_2: Seven
state_value_3: Six
state_value_4: Five
state_value_5: Four
state_value_6: Three
show_in_measurement_dlg: True

[Input Trace #4]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
section: Input
group: Traces
state_quant: Number of Traces to Downsample
state_value_1: Eight
state_value_2: Seven
state_value_3: Six
state_value_4: Five
state_value_5: Four
show_in_measurement_dlg: True

[Input Trace #5]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
section: Input
group: Traces
state_quant: Number of Traces to Downsample
state_value_1: Eight
state_value_2: Seven
state_value_3: Six
state_value_4: Five
show_in_measurement_dlg: True

[Input Trace #6]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
section: Input
group: Traces
state_quant: Number of Traces to Downsample
state_value_1: Eight
state_value_2: Seven
state_value_3: Six
show_in_measurement_dlg: True

[Input Trace #7]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
section: Input
group: Traces
state_quant: Number of Traces to Downsample
state_value_1: Eight
state_value_2: Seven
show_in_measurement_dlg: True

[Input Trace #8]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
section: Input
group: Traces
state_quant: Number of Traces to Downsample
state_value_1: Eight
show_in_measurement_dlg: True


# Output Trace
[Output Trace #1]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
show_in_measurement_dlg: True

[Output Trace #2]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
state_quant: Number of Traces to Downsample
state_value_1: Eight
state_value_2: Seven
state_value_3: Six
state_value_4: Five
state_value_5: Four
state_value_6: Three
state_value_7: Two
show_in_measurement_dlg: True

[Output Trace #3]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
state_quant: Number of Traces to Downsample
state_value_1: Eight
state_value_2: Seven
state_value_3: Six
state_value_4: Five
state_value_5: Four
state_value_6: Three
show_in_measurement_dlg: True

[Output Trace #4]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
state_quant: Number of Traces to Downsample
state_value_1: Eight
state_value_2: Seven
state_value_3: Six
state_value_4: Five
state_value_5: Four
show_in_measurement_dlg: True

[Output Trace #5]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
state_quant: Number of Traces to Downsample
state_value_1: Eight
state_value_2: Seven
state_value_3: Six
state_value_4: Five
show_in_measurement_dlg: True

[Output Trace #6]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
state_quant: Number of Traces to Downsample
state_value_1: Eight
state_value_2: Seven
state_value_3: Six
show_in_measurement_dlg: True

[Output Trace #7]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
state_quant: Number of Traces to Downsample
state_value_1: Eight
state_value_2: Seven
show_in_measurement_dlg: True

[Output Trace #8]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
state_quant: Number of Traces to Downsample
state_value_1: Eight
show_in_measurement_dlg: True
