# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Painter MicroLambda Bench Test Filter

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Painter_MicroLambda_BenchTestFilter

# default interface and address
interface: TCPIP
startup: Get config

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: False


[Model and options]
# List of models supported by this driver
model_str_1: MLBFR-0212

# Define quantities in groups. This list is a selection of allowed keywords,
# see the manual for a full list of options
#   datatype:      The datatype should be one of DOUBLE, BOOLEAN, COMBO,
#                  STRING, COMPLEX, VECTOR, VECTOR_COMPLEX, PATH or BUTTON.
#   unit:          Quantity unit
#   set_cmd:       Command used to send data to the instrument. Put <*> where the value should appear.
#   get_cmd:       Command used to get the data from the instrument. Default is set_cmd?
#   def_value:     Default value
#   low_lim:       Lowest allowable value.  Defaults to -INF
#   high_lim:      Highest allowable values.  Defaults to +INF
#   combo_def_1:   First option in a pull-down combo box. Only used when datatype=COMBO
#   combo_def_2:   Second option in a pull-down combo box. Only used when datatype=COMBO
#   ...
#   combo_def_n:   nth option in a pull-down combo box. Only used when datatype=COMBO
#   state_quant:   Quantity that determines this control's visibility
#   state_value_1: Value of "state_quant" for which the control is visible
#   state_value_2: Value of "state_quant" for which the control is visible
#   ...
#   state_value_n: Value of "state_quant" for which the control is visible
#   permission:    Sets BOTH/writability, options are BOTH, BOTH, WRITE or NONE. Default is BOTH
#   section:         Name of the section where the control belongs.
#   group:       Name of the group where the control belongs.


[Model Number]
datatype: STRING
group: Instrument Properties

[Serial Number]
datatype: STRING
group: Instrument Properties

[Filter BW]
datatype: DOUBLE
unit: Hz
group: Instrument Properties

[Filter BW Level]
datatype: DOUBLE
unit: dB
group: Instrument Properties

[Filter Insertion Loss]
datatype: DOUBLE
unit: dB
group: Instrument Properties

[Filter Limiting Level]
datatype: DOUBLE
unit: dBm
group: Instrument Properties


[Minimum Frequency]
datatype: DOUBLE
unit: Hz
group: Instrument Properties

[Maximum Frequency]
datatype: DOUBLE
unit: Hz
group: Instrument Properties

[Internal Temperature]
datatype: DOUBLE
group: Diagnostics
unit: <sup>o</sup>C

[+3.0VDC Supply]
datatype: DOUBLE
group: Diagnostics
unit: V

[+3.3VDC Supply]
datatype: DOUBLE
group: Diagnostics
unit: V

[+5.0VDC Supply]
datatype: DOUBLE
group: Diagnostics
unit: V

[+15.0VDC Supply]
datatype: DOUBLE
group: Diagnostics
unit: V

[-15.0VDC Supply]
datatype: DOUBLE
group: Diagnostics
unit: V

[Unit Health Status]
datatype: STRING
group: Diagnostics

[Frequency]
datatype: DOUBLE
unit: Hz
show_in_measurement_dlg: True
permission: BOTH
group: Frequency


