# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Painter MiniCircuits Mechanical RF Switch

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Painter_MiniCircuits_Mechanical_RF_Switch

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False

[Model and options]
# List of models supported by this driver
model_str_1: RC-1SP4T-A18
model_str_2: RC-2SP4T-A18
model_str_3: RC-4SPDT-A18
model_str_4: RC-8SPDT-A18
model_str_5: RC-1SP6T-A12
model_str_6: RC-2SP6T-A12
model_str_7: RC-2SP6T-A18
model_str_8: RC-2MTS-18

# Valid model strings returned by the instrument. Default value = model_str
# model_id_1:

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
[SP4T Switch A]
datatype: DOUBLE
def_value: 0
low_lim: 0
high_lim: 4
group: Switch Status
model_value_1: RC-1SP4T-A18
model_value_2: RC-2SP4T-A18

[SP4T Switch B]
datatype: DOUBLE
def_value: 0
low_lim: 0
high_lim: 4
group: Switch Status
model_value_1: RC-2SP4T-A18

[SP6T Switch A]
datatype: DOUBLE
def_value: 0
low_lim: 0
high_lim: 6
group: Switch Status
model_value_1: RC-1SP6T-A12
model_value_2: RC-2SP6T-A12
model_value_3: RC-2SP6T-A18

[SP6T Switch B]
datatype: DOUBLE
def_value: 0
low_lim: 0
high_lim: 6
group: Switch Status
model_value_1: RC-2SP6T-A12
model_value_2: RC-2SP6T-A18

[SPDT Switch A]
datatype: DOUBLE
def_value: 0
low_lim: 0
high_lim: 1
group: Switch Status
model_value_1: RC-4SPDT-A18
model_value_2: RC-8SPDT-A18

[SPDT Switch B]
datatype: DOUBLE
def_value: 0
low_lim: 0
high_lim: 1
group: Switch Status
model_value_1: RC-4SPDT-A18
model_value_2: RC-8SPDT-A18

[SPDT Switch C]
datatype: DOUBLE
def_value: 0
low_lim: 0
high_lim: 1
group: Switch Status
model_value_1: RC-4SPDT-A18
model_value_2: RC-8SPDT-A18

[SPDT Switch D]
datatype: DOUBLE
def_value: 0
low_lim: 0
high_lim: 1
group: Switch Status
model_value_1: RC-4SPDT-A18
model_value_2: RC-8SPDT-A18

[SPDT Switch E]
datatype: DOUBLE
def_value: 0
low_lim: 0
high_lim: 1
group: Switch Status
model_value_1: RC-8SPDT-A18

[SPDT Switch F]
datatype: DOUBLE
def_value: 0
low_lim: 0
high_lim: 1
group: Switch Status
model_value_1: RC-8SPDT-A18

[SPDT Switch G]
datatype: DOUBLE
def_value: 0
low_lim: 0
high_lim: 1
group: Switch Status
model_value_1: RC-8SPDT-A18

[SPDT Switch H]
datatype: DOUBLE
def_value: 0
low_lim: 0
high_lim: 1
group: Switch Status
model_value_1: RC-8SPDT-A18

[Transfer Switch A]
datatype: DOUBLE
def_value: 0
low_lim: 0
high_lim: 1
group: Switch Status
model_value_1: RC-2MTS-18

[Transfer Switch B]
datatype: DOUBLE
def_value: 0
low_lim: 0
high_lim: 1
group: Switch Status
model_value_1: RC-2MTS-18
