# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Painter MiniCircuits Solid State Switch

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Painter_MiniCircuits_Solid_State_Switch

# default interface and address
interface: Other

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False

[Model and options]
# List of models supported by this driver
model_str_1: USB-1SP8T-63H
model_str_2: USB-1SP16T-83H

# Valid model strings returned by the instrument. Default value = model_str
# model_id_1:

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
[SP16T Switch]
datatype: DOUBLE
def_value: 0
low_lim: 0
high_lim: 16
group: Switch Status
model_value_1: USB-1SP16T-83H

[SP8T Switch]
datatype: DOUBLE
def_value: 0
low_lim: 0
high_lim: 8
group: Switch Status
model_value_1: USB-1SP8T-63H