# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Painter Multi-Qubit Readout

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Painter_MultiQubit_Readout

# Define that this driver is a signal generator without hardware communication
signal_generator: True
signal_analyzer: True


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
[Number of qubits]
datatype: COMBO
combo_def_1: One
combo_def_2: Two
combo_def_3: Three
combo_def_4: Four
combo_def_5: Five
def_value: Two
group: Qubits
section: Settings


# Demodulated Voltages
#######################
[Single-shot Voltage, QB1]
unit: V
datatype: VECTOR_COMPLEX
permission: WRITE
group: Single-shot Voltage
section: Single-shot
show_in_measurement_dlg: True

[Single-shot Voltage, QB2]
unit: V
datatype: VECTOR_COMPLEX
permission: WRITE
group: Single-shot Voltage
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
state_value_8: Two
section: Single-shot

[Single-shot Voltage, QB3]
unit: V
datatype: VECTOR_COMPLEX
permission: WRITE
group: Single-shot Voltage
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
section: Single-shot

[Single-shot Voltage, QB4]
unit: V
datatype: VECTOR_COMPLEX
permission: WRITE
group: Single-shot Voltage
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
section: Single-shot

[Single-shot Voltage, QB5]
unit: V
datatype: VECTOR_COMPLEX
permission: WRITE
group: Single-shot Voltage
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
section: Single-shot

[Single-shot Voltage, QB6]
unit: V
datatype: VECTOR_COMPLEX
permission: WRITE
group: Single-shot Voltage
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
section: Single-shot

[Single-shot Voltage, QB7]
unit: V
datatype: VECTOR_COMPLEX
permission: WRITE
group: Single-shot Voltage
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
section: Single-shot

[Single-shot Voltage, QB8]
unit: V
datatype: VECTOR_COMPLEX
permission: WRITE
group: Single-shot Voltage
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
section: Single-shot

[Single-shot Voltage, QB9]
unit: V
datatype: VECTOR_COMPLEX
permission: WRITE
group: Single-shot Voltage
state_quant: Number of qubits
state_value_1: Nine
section: Single-shot

# Single-shot Result
[Single-shot Result, QB1]
datatype: VECTOR
permission: READ
group: Single-shot Result
section: Single-shot
show_in_measurement_dlg: True

[Single-shot Result, QB2]
datatype: VECTOR
permission: READ
group: Single-shot Result
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
state_value_8: Two
section: Single-shot

[Single-shot Result, QB3]
datatype: VECTOR
permission: READ
group: Single-shot Result
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
section: Single-shot

[Single-shot Result, QB4]
datatype: VECTOR
permission: READ
group: Single-shot Result
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
section: Single-shot

[Single-shot Result, QB5]
datatype: VECTOR
permission: READ
group: Single-shot Result
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
section: Single-shot

[Single-shot Result, QB6]
datatype: VECTOR
permission: READ
group: Single-shot Result
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
section: Single-shot

[Single-shot Result, QB7]
datatype: VECTOR
permission: READ
group: Single-shot Result
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
section: Single-shot

[Single-shot Result, QB8]
datatype: VECTOR
permission: READ
group: Single-shot Result
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
section: Single-shot

[Single-shot Result, QB9]
datatype: VECTOR
permission: READ
group: Single-shot Result
state_quant: Number of qubits
state_value_1: Nine
section: Single-shot

# State determination
[Voltage, QB1 - Decision Point]
unit: V
datatype: COMPLEX
group: Qubit 1
tooltip: A complex point on the decision boundary which maximizes the readout fidelity.
label: Decision Point
section: State Determination

[Voltage, QB1 - Direction]
unit: V
datatype: COMPLEX
tooltip: Complex vector pointing towards excited state, normal to decision boundary
group: Qubit 1
label: Direction
section: State Determination

[Voltage, QB2 - Decision Point]
unit: V
datatype: COMPLEX
group: Qubit 2
tooltip: A complex point on the decision boundary which maximizes the readout fidelity.
label: Decision Point
section: State Determination
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
state_value_8: Two

[Voltage, QB2 - Direction]
unit: V
datatype: COMPLEX
tooltip: Complex vector pointing towards excited state, normal to decision boundary
group: Qubit 2
label: Direction
section: State Determination
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
state_value_8: Two

[Voltage, QB3 - Decision Point]
unit: V
datatype: COMPLEX
group: Qubit 3
tooltip: A complex point on the decision boundary which maximizes the readout fidelity.
label: Decision Point
section: State Determination
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three

[Voltage, QB3 - Direction]
unit: V
datatype: COMPLEX
tooltip: Complex vector pointing towards excited state, normal to decision boundary
group: Qubit 3
label: Direction
section: State Determination
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three

[Voltage, QB4 - Decision Point]
unit: V
datatype: COMPLEX
group: Qubit 4
tooltip: A complex point on the decision boundary which maximizes the readout fidelity.
label: Decision Point
section: State Determination
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four

[Voltage, QB4 - Direction]
unit: V
datatype: COMPLEX
tooltip: Complex vector pointing towards excited state, normal to decision boundary
group: Qubit 4
label: Direction
section: State Determination
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four

[Voltage, QB5 - Decision Point]
unit: V
datatype: COMPLEX
group: Qubit 5
tooltip: A complex point on the decision boundary which maximizes the readout fidelity.
label: Decision Point
section: State Determination
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five

[Voltage, QB5 - Direction]
unit: V
datatype: COMPLEX
tooltip: Complex vector pointing towards excited state, normal to decision boundary
group: Qubit 5
label: Direction
section: State Determination
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five

[Voltage, QB6 - Decision Point]
unit: V
datatype: COMPLEX
group: Qubit 6
tooltip: A complex point on the decision boundary which maximizes the readout fidelity.
label: Decision Point
section: State Determination
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six

[Voltage, QB6 - Direction]
unit: V
datatype: COMPLEX
tooltip: Complex vector pointing towards excited state, normal to decision boundary
group: Qubit 6
label: Direction
section: State Determination
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six

[Voltage, QB7 - Decision Point]
unit: V
datatype: COMPLEX
group: Qubit 7
tooltip: A complex point on the decision boundary which maximizes the readout fidelity.
label: Decision Point
section: State Determination
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven

[Voltage, QB7 - Direction]
unit: V
datatype: COMPLEX
tooltip: Complex vector pointing towards excited state, normal to decision boundary
group: Qubit 7
label: Direction
section: State Determination
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven

[Voltage, QB8 - Decision Point]
unit: V
datatype: COMPLEX
group: Qubit 8
tooltip: A complex point on the decision boundary which maximizes the readout fidelity.
label: Decision Point
state_quant: Number of qubits
section: State Determination
state_value_1: Nine
state_value_2: Eight

[Voltage, QB8 - Direction]
unit: V
datatype: COMPLEX
tooltip: Complex vector pointing towards excited state, normal to decision boundary
group: Qubit 8
label: Direction
section: State Determination
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight

[Voltage, QB9 - Decision Point]
unit: V
datatype: COMPLEX
group: Qubit 9
tooltip: A complex point on the decision boundary which maximizes the readout fidelity.
label: Decision Point
section: State Determination
state_quant: Number of qubits
state_value_1: Nine

[Voltage, QB9 - Direction]
unit: V
datatype: COMPLEX
tooltip: Complex vector pointing towards excited state, normal to decision boundary
group: Qubit 9
label: Direction
section: State Determination
state_quant: Number of qubits
state_value_1: Nine


### Probability
#######################
# One-qubit
[Probability, P(0)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(0)
group: One-qubit probability
section: Probability
state_value_1: One

[Probability, P(1)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(1)
group: One-qubit probability
section: Probability
state_value_1: One

# Two-qubit
[Probability, P(00)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(00)
group: Two-qubit probability
section: Probability
state_value_1: Two


[Probability, P(01)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(01)
group: Two-qubit probability
section: Probability
state_value_1: Two

[Probability, P(10)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(10)
group: Two-qubit probability
section: Probability
state_value_1: Two

[Probability, P(11)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(11)
group: Two-qubit probability
section: Probability
state_value_1: Two

# Three-qubit
[Probability, P(000)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(000)
group: Three-qubit probability
section: Probability
state_value_1: Three

[Probability, P(001)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(001)
group: Three-qubit probability
section: Probability
state_value_1: Three

[Probability, P(010)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(010)
group: Three-qubit probability
section: Probability
state_value_1: Three

[Probability, P(011)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(011)
group: Three-qubit probability
section: Probability
state_value_1: Three

[Probability, P(100)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(100)
group: Three-qubit probability
section: Probability
state_value_1: Three

[Probability, P(101)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(101)
group: Three-qubit probability
section: Probability
state_value_1: Three

[Probability, P(110)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(110)
group: Three-qubit probability
section: Probability
state_value_1: Three

[Probability, P(111)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(111)
group: Three-qubit probability
section: Probability
state_value_1: Three

# Four-qubit
[Probability, P(0000)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(0000)
group: Four-qubit probability
section: Probability
state_value_1: Four

[Probability, P(0001)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(0001)
group: Four-qubit probability
section: Probability
state_value_1: Four

[Probability, P(0010)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(0010)
group: Four-qubit probability
section: Probability
state_value_1: Four

[Probability, P(0011)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(0011)
group: Four-qubit probability
section: Probability
state_value_1: Four

[Probability, P(0100)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(0100)
group: Four-qubit probability
section: Probability
state_value_1: Four

[Probability, P(0101)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(0101)
group: Four-qubit probability
section: Probability
state_value_1: Four

[Probability, P(0110)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(0110)
group: Four-qubit probability
section: Probability
state_value_1: Four

[Probability, P(0111)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(0111)
group: Four-qubit probability
section: Probability
state_value_1: Four

[Probability, P(1000)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(1000)
group: Four-qubit probability
section: Probability
state_value_1: Four

[Probability, P(1001)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(1001)
group: Four-qubit probability
section: Probability
state_value_1: Four

[Probability, P(1010)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(1010)
group: Four-qubit probability
section: Probability
state_value_1: Four

[Probability, P(1011)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(1011)
group: Four-qubit probability
section: Probability
state_value_1: Four

[Probability, P(1100)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(1100)
group: Four-qubit probability
section: Probability
state_value_1: Four

[Probability, P(1101)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(1101)
group: Four-qubit probability
section: Probability
state_value_1: Four

[Probability, P(1110)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(1110)
group: Four-qubit probability
section: Probability
state_value_1: Four

[Probability, P(1111)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(1111)
group: Four-qubit probability
section: Probability
state_value_1: Four

# Five-qubit
[Probability, P(00000)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(00000)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(00001)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(00001)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(00010)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(00010)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(00011)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(00011)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(00100)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(00100)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(00101)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(00101)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(00110)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(00110)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(00111)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(00111)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(01000)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(01000)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(01001)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(01001)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(01010)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(01010)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(01011)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(01011)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(01100)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(01100)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(01101)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(01101)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(01110)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(00110)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(01111)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(01111)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(10000)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(10000)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(10001)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(10001)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(10010)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(10010)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(10011)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(10011)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(10100)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(10100)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(10101)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(10101)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(10110)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(10110)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(10111)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(10111)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(11000)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(11000)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(11001)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(11001)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(11010)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(11010)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(11011)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(11011)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(11100)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(11100)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(11101)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(11101)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(11110)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(11110)
group: Five-qubit probability
section: Probability
state_value_1: Five

[Probability, P(11111)]
datatype: DOUBLE
permission: READ
state_quant: Number of qubits
label: P(11111)
group: Five-qubit probability
section: Probability
state_value_1: Five
