# Written by EK

# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Painter NI 9403 Digital Module

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Painter_NI_9403_Digital_Module

# default interface and address
interface: Other

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False

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
# Direction quantities

[Line 0 - Direction]
label: Line 0
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 1 - Direction]
label: Line 1
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 2 - Direction]
label: Line 2
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 3 - Direction]
label: Line 3
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 4 - Direction]
label: Line 4
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 5 - Direction]
label: Line 5
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 6 - Direction]
label: Line 6
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction


[Line 7 - Direction]
label: Line 7
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 8 - Direction]
label: Line 8
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 9 - Direction]
label: Line 9
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 10 - Direction]
label: Line 10
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 11 - Direction]
label: Line 11
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 12 - Direction]
label: Line 12
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 13 - Direction]
label: Line 13
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction


[Line 14 - Direction]
label: Line 14
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 15 - Direction]
label: Line 15
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 16 - Direction]
label: Line 16
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 17 - Direction]
label: Line 17
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 18 - Direction]
label: Line 18
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 19 - Direction]
label: Line 19
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 20 - Direction]
label: Line 20
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction


[Line 21 - Direction]
label: Line 21
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 22 - Direction]
label: Line 22
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 23 - Direction]
label: Line 23
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 24 - Direction]
label: Line 24
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 25 - Direction]
label: Line 25
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 26 - Direction]
label: Line 26
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 27 - Direction]
label: Line 27
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 28 - Direction]
label: Line 28
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 29 - Direction]
label: Line 29
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 30 - Direction]
label: Line 30
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

[Line 31 - Direction]
label: Line 31
datatype: COMBO
combo_def_1: Input
combo_def_2: Output
permission: WRITE
section: Direction

## State quantities
[Line 0 - State]
label: Line 0
datatype: BOOLEAN
permission: BOTH
section: State

[Line 1 - State]
label: Line 1
datatype: BOOLEAN
permission: BOTH
section: State

[Line 2 - State]
label: Line 2
datatype: BOOLEAN
permission: BOTH
section: State

[Line 3 - State]
label: Line 3
datatype: BOOLEAN
permission: BOTH
section: State

[Line 4 - State]
label: Line 4
datatype: BOOLEAN
permission: BOTH
section: State

[Line 5 - State]
label: Line 5
datatype: BOOLEAN
permission: BOTH
section: State

[Line 6 - State]
label: Line 6
datatype: BOOLEAN
permission: BOTH
section: State

[Line 7 - State]
label: Line 7
datatype: BOOLEAN
permission: BOTH
section: State

[Line 8 - State]
label: Line 8
datatype: BOOLEAN
permission: BOTH
section: State

[Line 9 - State]
label: Line 9
datatype: BOOLEAN
permission: BOTH
section: State

[Line 10 - State]
label: Line 10
datatype: BOOLEAN
permission: BOTH
section: State

[Line 11 - State]
label: Line 11
datatype: BOOLEAN
permission: BOTH
section: State

[Line 12 - State]
label: Line 12
datatype: BOOLEAN
permission: BOTH
section: State

[Line 13 - State]
label: Line 13
datatype: BOOLEAN
permission: BOTH
section: State

[Line 14 - State]
label: Line 14
datatype: BOOLEAN
permission: BOTH
section: State

[Line 15 - State]
label: Line 15
datatype: BOOLEAN
permission: BOTH
section: State

[Line 16 - State]
label: Line 16
datatype: BOOLEAN
permission: BOTH
section: State

[Line 17 - State]
label: Line 17
datatype: BOOLEAN
permission: BOTH
section: State

[Line 18 - State]
label: Line 18
datatype: BOOLEAN
permission: BOTH
section: State

[Line 19 - State]
label: Line 19
datatype: BOOLEAN
permission: BOTH
section: State

[Line 20 - State]
label: Line 20
datatype: BOOLEAN
permission: BOTH
section: State

[Line 21 - State]
label: Line 21
datatype: BOOLEAN
permission: BOTH
section: State

[Line 22 - State]
label: Line 22
datatype: BOOLEAN
permission: BOTH
section: State

[Line 23 - State]
label: Line 23
datatype: BOOLEAN
permission: BOTH
section: State

[Line 24 - State]
label: Line 24
datatype: BOOLEAN
permission: BOTH
section: State

[Line 25 - State]
label: Line 25
datatype: BOOLEAN
permission: BOTH
section: State

[Line 26 - State]
label: Line 26
datatype: BOOLEAN
permission: BOTH
section: State

[Line 27 - State]
label: Line 27
datatype: BOOLEAN
permission: BOTH
section: State

[Line 28 - State]
label: Line 28
datatype: BOOLEAN
permission: BOTH
section: State

[Line 29 - State]
label: Line 29
datatype: BOOLEAN
permission: BOTH
section: State

[Line 30 - State]
label: Line 30
datatype: BOOLEAN
permission: BOTH
section: State

[Line 31 - State]
label: Line 31
datatype: BOOLEAN
permission: BOTH
section: State