# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Painter PulseCorrection

# The version string should be updated whenever changes are made to this config file
version: 0.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Painter_PulseCorrection

# Define that this driver is a signal generator without hardware communication
signal_generator: True
signal_analyzer: True

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
# Settings
[Number of Traces to Correct]
datatype: COMBO
group: Settings
section: Transfer Function
combo_def_1: One
combo_def_2: Two
combo_def_3: Three
combo_def_4: Four
combo_def_5: Five
combo_def_6: Six
combo_def_7: Seven
combo_def_8: Eight

# Load Transfer Function
[Uniform Transfer Function]
datatype: BOOLEAN
def_value: 1
group: Settings
section: Transfer Function

[Transfer Function - Path]
label: Transfer Function Path
state_quant: Uniform Transfer Function
state_value_1: 1
datatype: PATH
def_value: r''
group: Path
section: Transfer Function
show_in_measurement_dlg: True

[Transfer Function #1 - Path]
label: Transfer Function #1
state_quant: Uniform Transfer Function
state_value_1: 0
datatype: PATH
group: Path
section: Transfer Function
show_in_measurement_dlg: True

[Transfer Function #2 - Path]
label: Transfer Function #2
state_quant: Uniform Transfer Function
state_value_1: 0
datatype: PATH
group: Path
section: Transfer Function
show_in_measurement_dlg: True

[Transfer Function #3 - Path]
label: Transfer Function #3
state_quant: Uniform Transfer Function
state_value_1: 0
datatype: PATH
group: Path
section: Transfer Function
show_in_measurement_dlg: True

[Transfer Function #4 - Path]
label: Transfer Function #4
state_quant: Uniform Transfer Function
state_value_1: 0
datatype: PATH
group: Path
section: Transfer Function
show_in_measurement_dlg: True

[Transfer Function #5 - Path]
label: Transfer Function #5
state_quant: Uniform Transfer Function
state_value_1: 0
datatype: PATH
group: Path
section: Transfer Function
show_in_measurement_dlg: True

[Transfer Function #6 - Path]
label: Transfer Function #6
state_quant: Uniform Transfer Function
state_value_1: 0
datatype: PATH
group: Path
section: Transfer Function
show_in_measurement_dlg: True

[Transfer Function #7 - Path]
label: Transfer Function #7
state_quant: Uniform Transfer Function
state_value_1: 0
datatype: PATH
group: Path
section: Transfer Function
show_in_measurement_dlg: True

[Transfer Function #8 - Path]
label: Transfer Function #8
state_quant: Uniform Transfer Function
state_value_1: 0
datatype: PATH
group: Path
section: Transfer Function
show_in_measurement_dlg: True

# Test input trace
[Use Test Input Trace]
datatype: BOOLEAN
group: Settings
section: Input

[Test Input Trace - Number of Pulses]
label: Number of Pulses
datatype: DOUBLE
group: Settings
section: Input
state_quant: Use Test Input Trace
state_value_1: 1

[Test Input Trace - Pulse Spacing]
label: Pulse Spacing
datatype: DOUBLE
group: Settings
section: Input
unit: s
state_quant: Use Test Input Trace
state_value_1: 1

[Test Input Trace - Start Delay]
label: Start Delay
datatype: DOUBLE
group: Settings
section: Input
unit: s
state_quant: Use Test Input Trace
state_value_1: 1

[Test Input Trace - Plateau]
label: Plateau
datatype: DOUBLE
group: Settings
section: Input
unit: s
state_quant: Use Test Input Trace
state_value_1: 1

[Test Input Trace - End Delay]
label: End Delay
datatype: DOUBLE
group: Settings
section: Input
unit: s
state_quant: Use Test Input Trace
state_value_1: 1

# Input Trace
[Input Trace #1]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
section: Input
group: Traces
show_in_measurement_dlg: True

[Input Trace #2]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
section: Input
group: Traces
state_quant: Number of Traces to Correct
state_value_1: Eight
state_value_2: Seven
state_value_3: Six
state_value_4: Five
state_value_5: Four
state_value_6: Three
state_value_7: Two
show_in_measurement_dlg: True

[Input Trace #3]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
section: Input
group: Traces
state_quant: Number of Traces to Correct
state_value_1: Eight
state_value_2: Seven
state_value_3: Six
state_value_4: Five
state_value_5: Four
state_value_6: Three
show_in_measurement_dlg: True

[Input Trace #4]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
section: Input
group: Traces
state_quant: Number of Traces to Correct
state_value_1: Eight
state_value_2: Seven
state_value_3: Six
state_value_4: Five
state_value_5: Four
show_in_measurement_dlg: True

[Input Trace #5]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
section: Input
group: Traces
state_quant: Number of Traces to Correct
state_value_1: Eight
state_value_2: Seven
state_value_3: Six
state_value_4: Five
show_in_measurement_dlg: True

[Input Trace #6]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
section: Input
group: Traces
state_quant: Number of Traces to Correct
state_value_1: Eight
state_value_2: Seven
state_value_3: Six
show_in_measurement_dlg: True

[Input Trace #7]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
section: Input
group: Traces
state_quant: Number of Traces to Correct
state_value_1: Eight
state_value_2: Seven
show_in_measurement_dlg: True

[Input Trace #8]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
section: Input
group: Traces
state_quant: Number of Traces to Correct
state_value_1: Eight
show_in_measurement_dlg: True

[Add Balancing Pulse]
datatype: BOOLEAN
group: Balancing Pulse
section: Output
def_value: 0

[Balancing Pulse - Start Delay]
label: Start Delay
datatype: DOUBLE
unit: s
group: Balancing Pulse
section: Output
state_quant: Add Balancing Pulse
state_value_1: 1

[Balancing Pulse - Plateau]
label: Plateau
datatype: DOUBLE
unit: s
group: Balancing Pulse
section: Output
state_quant: Add Balancing Pulse
state_value_1: 1

[Balancing Pulse - End Delay]
label: End Delay
datatype: DOUBLE
unit: s
group: Balancing Pulse
section: Output
state_quant: Add Balancing Pulse
state_value_1: 1


# Output Trace
[Output Trace #1]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
show_in_measurement_dlg: True

[Output Trace #2]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
state_quant: Number of Traces to Correct
state_value_1: Eight
state_value_2: Seven
state_value_3: Six
state_value_4: Five
state_value_5: Four
state_value_6: Three
state_value_7: Two
show_in_measurement_dlg: True

[Output Trace #3]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
state_quant: Number of Traces to Correct
state_value_1: Eight
state_value_2: Seven
state_value_3: Six
state_value_4: Five
state_value_5: Four
state_value_6: Three
show_in_measurement_dlg: True

[Output Trace #4]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
state_quant: Number of Traces to Correct
state_value_1: Eight
state_value_2: Seven
state_value_3: Six
state_value_4: Five
state_value_5: Four
show_in_measurement_dlg: True

[Output Trace #5]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
state_quant: Number of Traces to Correct
state_value_1: Eight
state_value_2: Seven
state_value_3: Six
state_value_4: Five
show_in_measurement_dlg: True

[Output Trace #6]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
state_quant: Number of Traces to Correct
state_value_1: Eight
state_value_2: Seven
state_value_3: Six
show_in_measurement_dlg: True

[Output Trace #7]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
state_quant: Number of Traces to Correct
state_value_1: Eight
state_value_2: Seven
show_in_measurement_dlg: True

[Output Trace #8]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
state_quant: Number of Traces to Correct
state_value_1: Eight
show_in_measurement_dlg: True
