# A driver definition file for a Quantum Process Tomography Signal Generator

[General settings]

# The name is shown in all the configuration windows
name: Quantum Process Tomography

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: QuantumProcessTomography

# Define that the driver is a Signal Generator
signal_generator: True
signal_analyzer: True

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
[Sampling Rate]
datatype: DOUBLE
unit: GSa/s
def_value: 2.4
tooltip: Sampling rate of the AWG

[G-E Frequency]
datatype: DOUBLE
unit: MHz
def_value: 250
tooltip: Modulation frequency of the output envelopes.

[E-F Frequency]
datatype: DOUBLE
unit: MHz
def_value: 500
tooltip: Modulation frequency of the output envelopes.

[Basis Rotation Generator Pulse Length]
datatype: DOUBLE
unit: ns
def_value: 32
tooltip: Length of a pi or pi/2 pulse used to generate basis rotations.

[Basis Rotation Generator Pulse Sigma]
datatype: DOUBLE
unit: ns
def_value: 8
tooltip: Standard deviation of the primary envelope of a Clifford generator.

[Basis Rotation Generator Pi Weight]
datatype: DOUBLE
def_value: 1
tooltip: The DRAG weight of the primary quadrature of a Clifford generator.

[Basis Rotation Generator Pi-Half Weight]
datatype: DOUBLE
def_value: 1
tooltip: The DRAG weight of the primary quadrature of a Clifford generator.

[Basis Rotation Generator Z Bias]
datatype: DOUBLE
def_value: 0.0
tooltip: The constant detuning offset for DRAG phase correction.

[Initial State Index]
datatype: DOUBLE
def_value: 10
tooltip: The number of random Cliffords to generate.

[Measurement Basis Index]
datatype: DOUBLE
def_value: 0
tooltip: The random seed used to generate the Cliffords.

[Waveform - X Signal]
datatype: VECTOR
permission: READ
x_name: Time
x_unit: ns

[Waveform - Y Signal]
datatype: VECTOR
permission: READ
x_name: Time
x_unit: ns

[Waveform - Z Signal]
datatype: VECTOR
permission: READ
x_name: Time
x_unit: ns

[Process X - G-E]
datatype: VECTOR
permission: WRITE
x_name: Time
x_unit: ns

[Process X - E-F]
datatype: VECTOR
permission: WRITE
x_name: Time
x_unit: ns


[Process Y - G-E]
datatype: VECTOR
permission: WRITE
x_name: Time
x_unit: ns

[Process Y - E-F]
datatype: VECTOR
permission: WRITE
x_name: Time
x_unit: ns

[Process Z]
datatype: VECTOR
permission: WRITE
x_name: Time
x_unit: ns

################################# READOUT SECTION
[Readout Length]
datatype: DOUBLE
unit: ns
def_value: 100
group: Readout
section: Readout

[Readout Amplitude]
datatype: DOUBLE
unit: V
def_value: 0.6
group: Readout
section: Readout

[Readout Phase]
datatype: DOUBLE
unit: degrees
def_value: 0
group: Readout
section: Readout

[Readout Frequency]
datatype: DOUBLE
unit: MHz
def_value: 100
group: Readout
section: Readout

[Readout I/Q Ratio]
datatype: DOUBLE
def_value: 1
group: Readout
section: Readout
tooltip: ratio of IQ voltages to compensate for mixer arm imbalance

[Readout I/Q Phase Skew]
datatype: DOUBLE
unit: degrees
def_value: 0
group: Readout
section: Readout
tooltip: compensation for imperfect 90 degree offset phase between I and Q

[Readout I DC Offset]
datatype: DOUBLE
unit: V
def_value: 0
group: Readout
section: Readout
tooltip: for LO bleedthrough compensation

[Readout Q DC Offset]
datatype: DOUBLE
unit: V
def_value: 0
group: Readout
section: Readout
tooltip: for LO bleedthrough compensation

[Readout Z-Bias]
label: Readout Z-Bias
datatype: DOUBLE
unit: V
def_value: 0
group: Readout
section: Readout

[Do Wicked Fast Readout?]
datatype: BOOLEAN
def_value: 0
group: Readout
section:Readout
tooltip: zoom zoom

[Generate Readout Trig?]
datatype: BOOLEAN
def_value: 0
group: Readout
section: Readout

[Readout Trig Amplitude]
datatype: DOUBLE
unit: V
def_value: 1
state_quant: Generate Readout Trig?
state_value_1: 1
group: Readout
section: Readout

[Readout Trig Duration]
datatype: DOUBLE
unit: ns
def_value: 50
state_quant: Generate Readout Trig?
state_value_1: 1
group: Readout
section: Readout

[Waveform - Readout I]
datatype: VECTOR
permission: READ
x_name: Time
x_unit: ns

[Waveform - Readout Q]
datatype: VECTOR
permission: READ
x_name: Time
x_unit: ns

[Waveform - Readout Trigger]
datatype: VECTOR
permission: READ
x_name: Time
x_unit: ns

[Do Heralding?]
datatype: BOOLEAN
def_value: 0
group: Readout
section: Readout

[Delay After Heralding Pulse]
datatype: DOUBLE
unit: ns
def_value: 100
state_quant: Do Heralding?
state_value_1: 1
group: Readout
section: Readout

[Process Pulse Source]
datatype: STRING

#################Demodulation

[Demodulation - Skip]
label: Skip start
datatype: DOUBLE
def_value: 0.0
unit: ns
section: Demodulation
group: Demodulation

[Demodulation - Number of Samples]
label: Number of Samples
datatype: DOUBLE
def_value: 100
section: Demodulation
group: Demodulation
tooltip: Making this an explicit input so that there is no errors due to rounding of lengths or missed triggers

[Demodulation - Input I]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
section: Demodulation
group: Demodulation
show_in_measurement_dlg: True

[Demodulation - Input Q]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
section: Demodulation
group: Demodulation
show_in_measurement_dlg: True

[QB Voltage]
unit: V
datatype: VECTOR_COMPLEX
permission: READ
section: Demodulation

