# Instrument driver configuration file.
# Written by EK on 07/09/2018
[General settings]

# The name is shown in all the configuration windows
name: Painter Stanford Voltage Source SIM 928

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Painter_SRS_SIM928



[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False

# List of models supported by this driver
#model_str_1: SIM928



# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: True

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 30

# Default termination character
term_char: CR+LF

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication.
query_instr_errors: False

# Bit mask for checking status event errors (default is 60, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
# error_cmd:

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: *CLS

# Final commands sent to the instrument when closing the driver
# final:


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
[Slot 1 - Slot Status]
datatype: COMBO
def_value: Empty
combo_def_1: Empty
combo_def_2: Connected
cmd_def_1: 0
cmd_def_2: 1
group: Slot Status
section: Slot 1

[Slot 1 - Voltage]
datatype: DOUBLE
unit: V
low_lim: -20.0
high_lim: +20.0
set_cmd: SNDT 1,"VOLT <*>"
state_quant: Slot 1 - Slot Status
state_value_1: Connected
group: Settings
section: Slot 1

[Slot 1 - Output]
datatype: COMBO
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
set_cmd: SNDT 1,"EXON <*>"
state_quant: Slot 1 - Slot Status
state_value_1: Connected
group: Settings
section: Slot 1

[Slot 2 - Slot Status]
datatype: COMBO
def_value: Empty
combo_def_1: Empty
combo_def_2: Connected
cmd_def_1: 0
cmd_def_2: 1
group: Slot Status
section: Slot 2

[Slot 2 - Voltage]
datatype: DOUBLE
unit: V
low_lim: -20.0
high_lim: +20.0
set_cmd: SNDT 2,"VOLT <*>"
state_quant: Slot 2 - Slot Status
state_value_1: Connected
group: Settings
section: Slot 2

[Slot 2 - Output]
datatype: COMBO
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
set_cmd: SNDT 2,"EXON <*>"
state_quant: Slot 2 - Slot Status
state_value_1: Connected
group: Settings
section: Slot 2


[Slot 3 - Slot Status]
datatype: COMBO
def_value: Empty
combo_def_1: Empty
combo_def_2: Connected
cmd_def_1: 0
cmd_def_2: 1
group: Slot Status
section: Slot 3

[Slot 3 - Voltage]
datatype: DOUBLE
unit: V
low_lim: -20.0
high_lim: +20.0
set_cmd: SNDT 3,"VOLT <*>"
state_quant: Slot 3 - Slot Status
state_value_1: Connected
group: Settings
section: Slot 3

[Slot 3 - Output]
datatype: COMBO
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
set_cmd: SNDT 3,"EXON <*>"
state_quant: Slot 3 - Slot Status
state_value_1: Connected
group: Settings
section: Slot 3


[Slot 4 - Slot Status]
datatype: COMBO
def_value: Empty
combo_def_1: Empty
combo_def_2: Connected
cmd_def_1: 0
cmd_def_2: 1
group: Slot Status
section: Slot 4

[Slot 4 - Voltage]
datatype: DOUBLE
unit: V
low_lim: -20.0
high_lim: +20.0
set_cmd: SNDT 4,"VOLT <*>"
state_quant: Slot 4 - Slot Status
state_value_1: Connected
group: Settings
section: Slot 4

[Slot 4 - Output]
datatype: COMBO
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
set_cmd: SNDT 4,"EXON <*>"
state_quant: Slot 4 - Slot Status
state_value_1: Connected
group: Settings
section: Slot 4


[Slot 5 - Slot Status]
datatype: COMBO
def_value: Empty
combo_def_1: Empty
combo_def_2: Connected
cmd_def_1: 0
cmd_def_2: 1
group: Slot Status
section: Slot 5

[Slot 5 - Voltage]
datatype: DOUBLE
unit: V
low_lim: -20.0
high_lim: +20.0
set_cmd: SNDT 5,"VOLT <*>"
state_quant: Slot 5 - Slot Status
state_value_1: Connected
group: Settings
section: Slot 5

[Slot 5 - Output]
datatype: COMBO
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
set_cmd: SNDT 5,"EXON <*>"
state_quant: Slot 5 - Slot Status
state_value_1: Connected
group: Settings
section: Slot 5


[Slot 6 - Slot Status]
datatype: COMBO
def_value: Empty
combo_def_1: Empty
combo_def_2: Connected
cmd_def_1: 0
cmd_def_2: 1
group: Slot Status
section: Slot 6

[Slot 6 - Voltage]
datatype: DOUBLE
unit: V
low_lim: -20.0
high_lim: +20.0
set_cmd: SNDT 6,"VOLT <*>"
state_quant: Slot 6 - Slot Status
state_value_1: Connected
group: Settings
section: Slot 6

[Slot 6 - Output]
datatype: COMBO
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
set_cmd: SNDT 6,"EXON <*>"
state_quant: Slot 6 - Slot Status
state_value_1: Connected
group: Settings
section: Slot 6


[Slot 7 - Slot Status]
datatype: COMBO
def_value: Empty
combo_def_1: Empty
combo_def_2: Connected
cmd_def_1: 0
cmd_def_2: 1
group: Slot Status
section: Slot 7

[Slot 7 - Voltage]
datatype: DOUBLE
unit: V
low_lim: -20.0
high_lim: +20.0
set_cmd: SNDT 7,"VOLT <*>"
state_quant: Slot 7 - Slot Status
state_value_1: Connected
group: Settings
section: Slot 7

[Slot 7 - Output]
datatype: COMBO
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
set_cmd: SNDT 7,"EXON <*>"
state_quant: Slot 7 - Slot Status
state_value_1: Connected
group: Settings
section: Slot 7


[Slot 8 - Slot Status]
datatype: COMBO
def_value: Empty
combo_def_1: Empty
combo_def_2: Connected
cmd_def_1: 0
cmd_def_2: 1
group: Slot Status
section: Slot 8

[Slot 8 - Voltage]
datatype: DOUBLE
unit: V
low_lim: -20.0
high_lim: +20.0
set_cmd: SNDT 8,"VOLT <*>"
state_quant: Slot 8 - Slot Status
state_value_1: Connected
group: Settings
section: Slot 8

[Slot 8 - Output]
datatype: COMBO
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
set_cmd: SNDT 8,"EXON <*>"
state_quant: Slot 8 - Slot Status
state_value_1: Connected
group: Settings
section: Slot 8
