# Instrument driver configuration file.
# Written by EK 12/8/2019

[General settings]

# The name is shown in all the configuration windows
name: Painter Tektronix RSA3408B Spectrum Analyzer

# The version string should be updated whenever changes are made to this config file
version: 0.0.1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Painter_Tektronix_RSA3408B_SpectrumAnalyzer

# default interface and address
interface: GPIB


[Model and options]
# The option section allow instruments with different options to use the same driver

# List of models supported by this driver
model_str_1: RSA3408B

# Check instrument model id at startup (True or False). Default is False
check_model: True

# Valid model strings returned by the instrument. Default value = model_str
model_id_1: RSA3408B

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: True

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 1000

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication.
query_instr_errors: False

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd:

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: :INIT:CONT ON;

# Boolean string values (used for sending True/False to instrument), default is 1 and 0
#str_true: ON
#str_false: OFF

# Final commands sent to the instrument when closing the driver
final:


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
[Auto input attenuation]
datatype: BOOLEAN
def_value: 1
set_cmd: :INP:ATT:AUTO
tooltip: Determines whether to automatically set the input attenuation according to the reference level
group: Attenuation
section: Input

[Input attenuation]
datatype: DOUBLE
unit: dB
def_value: 0
set_cmd: :INP:ATT
low_lim: 0
state_quant: Auto input attenuation
state_value_1: 0
group: Input attenuation
section: Input
tooltip: The attenuation values 0 - 55dB in 5dB step can be set for RF frequencies (40MHz to 8GHz).

[Mixer Level]
datatype: DOUBLE
unit: dBm
set_cmd: :INP:MIX
state_quant: Auto input attenuation
state_value_1: 0
group: Mixer
section: Input
tooltip: The mixer level values -25 - 0dBm in 5dB step can be set for RF frequencies (40MHz to 8GHz).

[Reference Level]
datatype: DOUBLE
unit: dBm
set_cmd: :INP:MLEV
group: Reference
section: Input

[Range type]
datatype: COMBO
def_value: Start - Stop
combo_def_1: Center - Span
combo_def_2: Start - Stop
permission: NONE
group: Frequency
section: Sweep setup

[Start frequency]
datatype: DOUBLE
def_value: 0
unit: Hz
set_cmd: :SENS:FREQ:STAR
state_quant: Range type
state_value_1: Start - Stop
group: Frequency
section: Sweep setup

[Stop frequency]
datatype: DOUBLE
def_value: 8E9
unit: Hz
set_cmd: :SENS:FREQ:STOP
state_quant: Range type
state_value_1: Start - Stop
group: Frequency
section: Sweep setup

[Center frequency]
datatype: DOUBLE
def_value: 800E6
unit: Hz
set_cmd: :SENS:FREQ:CENT
state_quant: Range type
state_value_1: Center - Span
group: Frequency
section: Sweep setup

[Span]
datatype: DOUBLE
def_value: 1E6
unit: Hz
set_cmd: :SENS:FREQ:SPAN
state_quant: Range type
state_value_1: Center - Span
group: Frequency
section: Sweep setup

[Auto step size (center frequency)]
datatype: BOOLEAN
def_value: 1
set_cmd: :SENS:FREQ:CENT:STEP:AUTO
group: Frequency
section: Sweep setup

[Step size (center frequency)]
datatype: DOUBLE
set_cmd: :SENS:FREQ:CENT:STEP:INCR
state_quant: Auto step size (center frequency)
state_value_1: 0
group: Frequency
section: Sweep setup

[Average]
datatype: BOOLEAN
def_value: 0
set_cmd: :SENS:SPEC:AVER:STAT
group: Average
section: Sweep setup

[Average type]
datatype: COMBO
def_value: Root-mean-square
combo_def_1: Root-mean-square
combo_def_2: Maximum
combo_def_3: Minimum
cmd_def_1: RMS
cmd_def_2: MAX
cmd_def_3: MIN
set_cmd: :SENS:SPEC:AVER:TYPE
group: Average
section: Sweep setup
state_quant: Average
state_value_1: 1

[Average count]
datatype: DOUBLE
def_value: 1
low_lim: 1
high_lim: 10000
set_cmd: :SENS:SPEC:AVER:COUN
group: Average
section: Sweep setup

[Auto RBW]
datatype: BOOLEAN
def_value: 0
set_cmd: :SENS:SPEC:BAND:RES:AUTO
group: Resolution Bandwidth
section: Sweep setup

[RBW]
datatype: DOUBLE
unit: Hz
def_value: 1
set_cmd: :SENS:SPEC:BAND:RES
state_quant: Auto RBW
state_value_1: 0
group: Resolution Bandwidth
section: Sweep setup

[RBW filter type]
datatype: COMBO
def_value: Nyquist filter
combo_def_1: Rectangular filter
combo_def_2: Gaussian filter
combo_def_3: Nyquist filter
combo_def_4: Root Nyquist filter
cmd_def_1: RECT
cmd_def_2: GAUS
cmd_def_3: NYQ
cmd_def_4: RNYQ
set_cmd: :SENS:SPEC:FILT:TYPE
group: Resolution Bandwidth
section: Sweep setup
state_quant: Auto RBW
state_value_1: 0

[RBW filter roll-off rate]
datatype: DOUBLE
def_value: 0.5
low_lim: 0
high_lim: 1
set_cmd: :SENS:SPEC:FILT:COEF
state_quant: RBW filter type
state_value_1: Nyquist filter
state_value_2: Root Nyquist Filter
group: Resolution Bandwidth
section: Sweep setup

#[Extended resolution]
#datatype: BOOLEAN
#def_value: 0
#tooltip: Enable the extended resolution that eliminates the limit on the number of FFT points (normally limited internally)
#set_cmd: :SENS:SPEC:FFT:ERES
#group:


[Measurement mode]
datatype: COMBO
combo_def_1: Normal spectrum analysis
combo_def_2: Digital Phosphor spectrum analysis
combo_def_3: Spectrum analysis with spectrogram
combo_def_4: Real-time spectrum analysis
combo_def_5: Real-time spectrum analysis with zoom function
cmd_def_1: "SANORMAL"
cmd_def_2: "SADPX"
cmd_def_3: "SASGRAM"
cmd_def_4: "SARTIME"
cmd_def_5: "SAZRTIME"
set_cmd: :INST:SEL
section: Measurement

[Measurement item]
datatype: COMBO
combo_def_1: Off
combo_def_2: Channel power
combo_def_3: Adjacent channel leakage power (ACPR)
combo_def_4: Occupied bandwidth (OBW)
combo_def_5: Emission bandwidth (EBW)
combo_def_6: Carrier-to-noise ratio (C/N)
combo_def_7: Carrier frequency
combo_def_8: Spurious signal
cmd_def_1: OFF
cmd_def_2: CHP
cmd_def_3: ACP
cmd_def_4: OBW
cmd_def_5: EBW
cmd_def_6: CNR
cmd_def_7: CFR
cmd_def_8: SPUR
set_cmd: :SENS:SPEC:MEAS
state_quant: Measurement mode
state_value_1: Normal spectrum analysis
state_value_2: Spectrum analysis with spectrogram
state_value_3: Real-time spectrum analysis
section: Measurement

[Channel power - Channel bandwidth]
datatype: DOUBLE
label: Channel bandwidth
unit: Hz
set_cmd: :SENS:CHP:BAND:INT
state_quant: Measurement item
state_value_1: Channel power
tooltip: Sets or queries the channel bandwidth for the channel power measurement
group: Channel power
section: Measurement

[Channel power - Filter type]
label: Filter type
datatype: COMBO
def_value: Nyquist filter
combo_def_1: Rectangular filter
combo_def_2: Gaussian filter
combo_def_3: Nyquist filter
combo_def_4: Root Nyquist filter
cmd_def_1: RECT
cmd_def_2: GAUS
cmd_def_3: NYQ
cmd_def_4: RNYQ
set_cmd: :SENS:CHP:FILT:TYPE
state_quant: Measurement item
state_value_1: Channel power
tooltip: Sets or queries the filter for the channel power measurement
group: Channel power
section: Measurement

[Channel power - Filter roll-off rate]
label: Filter roll-off rate
datatype: DOUBLE
def_value: 0.5
low_lim: 0
high_lim: 1
state_quant: Channel power - Filter type
state_value_1: Nyquist filter
state_value_2: Root Nyquist filter
set_cmd: :SENS:CHP:FILT:COEF
group: Channel power
section: Measurement

[C/N - Channel bandwidth]
datatype: DOUBLE
label: Channel bandwidth
unit: Hz
set_cmd: :SENS:CNR:BAND:INT
state_quant: Measurement item
state_value_1: Carrier-to-noise ratio (C/N)
tooltip: Sets or queries the channel bandwidth for C/N measurement
group: C/N
section: Measurement

[C/N - Noise bandwidth]
datatype: DOUBLE
label: Noise bandwidth
unit: Hz
set_cmd: :SENS:CNR:BAND:NOIS
state_quant: Measurement item
state_value_1: Carrier-to-noise ratio (C/N)
tooltip: Sets or queries the noise bandwidth for C/N measurement
group: C/N
section: Measurement

[C/N - Filter type]
label: Filter type
datatype: COMBO
def_value: Nyquist filter
combo_def_1: Rectangular filter
combo_def_2: Gaussian filter
combo_def_3: Nyquist filter
combo_def_4: Root Nyquist filter
cmd_def_1: RECT
cmd_def_2: GAUS
cmd_def_3: NYQ
cmd_def_4: RNYQ
set_cmd: :SENS:CNR:FILT:TYPE
state_quant: Measurement item
state_value_1: Carrier-to-noise ratio (C/N)
tooltip: Sets or queries the filter for the C/N measurement
group: C/N
section: Measurement

[C/N - Filter roll-off rate]
label: Filter roll-off rate
datatype: DOUBLE
def_value: 0.5
low_lim: 0.0001
high_lim: 1
state_quant: C/N - Filter type
state_value_1: Nyquist filter
state_value_2: Root Nyquist filter
set_cmd: :SENS:CNR:FILT:COEF
group: C/N
section: Measurement

[C/N - Offset frequency]
label: Offset frequency
datatype: DOUBLE
set_cmd: :SENS:CNR:OFFS
state_quant: Measurement item
state_value_1: Carrier-to-noise ratio (C/N)
group: C/N
section: Measurement


## Signals
[Spectrum]
datatype: VECTOR
unit: dBm
x_unit: Hz
x_name: Frequency
permission: READ
group: Signals
section: Measurement

[Channel Power]
datatype: DOUBLE
unit: dBm
permission: READ
get_cmd: :INIT:CONT OFF;:FETC:SPEC:CHP?;:INIT:CONT ON;
state_quant: Measurement item
state_value_1: Channel power
group: Signals
section: Measurement
