[General settings]
name = Painter Z-Crosstalk Compensation
version = 1.0
driver_path = Painter_Z-Crosstalk_Compensation
signal_generator = True

[Crosstalk Matrix]
datatype = PATH
tooltip = a csv file that contains an NxN crosstalk matrix
group = Crosstalk
section = Setting

[Load Crosstalk Matrix]
datatype = BUTTON
tooltip = Load crosstalk matrix from the cvs file to the Input section
group = Crosstalk
section = Setting

[Tuning Curves]
datatype = PATH
tooltip = a csv file that contains tuning curves for N qubits, with fmax, fmin, V_0, V_bias, f_bias
group = Tuning Curve
section = Setting

[Load Tuning Curves]
datatype = BUTTON
tooltip = Load tuning curves from the cvs file to the Input section
group = Tuning Curve
section = Setting

[Number of Z-Control Lines]
datatype = COMBO
def_value = 2
combo_def_1 = 2
combo_def_2 = 3
combo_def_3 = 4
combo_def_4 = 5
combo_def_5 = 6
combo_def_6 = 7
combo_def_7 = 8
combo_def_8 = 9
combo_def_9 = 10
combo_def_10 = 11
combo_def_11 = 12
combo_def_12 = 13
combo_def_13 = 14
combo_def_14 = 15
combo_def_15 = 16
combo_def_16 = 17
combo_def_17 = 18
combo_def_18 = 19
combo_def_19 = 20
group = Setting
section = Setting

[Do Conversion]
datatype = BUTTON
group = Operation
section = Output

[f max q1]
datatype = double
unit = GHz
def_value = 0
permission = WRITE
tooltip = Maximum frequency of qubit 1
state_quant = Number of Z-Control Lines
group = Qubit 1
section = Setting
state_value_1 = 1
state_value_2 = 2
state_value_3 = 3
state_value_4 = 4
state_value_5 = 5
state_value_6 = 6
state_value_7 = 7
state_value_8 = 8
state_value_9 = 9
state_value_10 = 10
state_value_11 = 11
state_value_12 = 12
state_value_13 = 13
state_value_14 = 14
state_value_15 = 15
state_value_16 = 16
state_value_17 = 17
state_value_18 = 18
state_value_19 = 19
state_value_20 = 20

[f min q1]
datatype = double
unit = GHz
def_value = 0
permission = WRITE
tooltip =  Minimum frequency of qubit 1 (if asymmetric)
state_quant = Number of Z-Control Lines
group = Qubit 1
section = Setting
state_value_1 = 1
state_value_2 = 2
state_value_3 = 3
state_value_4 = 4
state_value_5 = 5
state_value_6 = 6
state_value_7 = 7
state_value_8 = 8
state_value_9 = 9
state_value_10 = 10
state_value_11 = 11
state_value_12 = 12
state_value_13 = 13
state_value_14 = 14
state_value_15 = 15
state_value_16 = 16
state_value_17 = 17
state_value_18 = 18
state_value_19 = 19
state_value_20 = 20

[V0 q1]
datatype = double
unit = V
def_value = 0
permission = WRITE
state_quant = Number of Z-Control Lines
group = Qubit 1
section = Setting
state_value_1 = 1
state_value_2 = 2
state_value_3 = 3
state_value_4 = 4
state_value_5 = 5
state_value_6 = 6
state_value_7 = 7
state_value_8 = 8
state_value_9 = 9
state_value_10 = 10
state_value_11 = 11
state_value_12 = 12
state_value_13 = 13
state_value_14 = 14
state_value_15 = 15
state_value_16 = 16
state_value_17 = 17
state_value_18 = 18
state_value_19 = 19
state_value_20 = 20

[V bias q1]
datatype = double
unit = V
def_value = 0
permission = WRITE
state_quant = Number of Z-Control Lines
group = Qubit 1
section = Setting
state_value_1 = 1
state_value_2 = 2
state_value_3 = 3
state_value_4 = 4
state_value_5 = 5
state_value_6 = 6
state_value_7 = 7
state_value_8 = 8
state_value_9 = 9
state_value_10 = 10
state_value_11 = 11
state_value_12 = 12
state_value_13 = 13
state_value_14 = 14
state_value_15 = 15
state_value_16 = 16
state_value_17 = 17
state_value_18 = 18
state_value_19 = 19
state_value_20 = 20

[f bias q1]
datatype = double
unit = GHz
def_value = 0
tooltip = frequency of qubit 1 with only V bias q1 applied and others 0
permission = WRITE
state_quant = Number of Z-Control Lines
group = Qubit 1
section = Setting
state_value_1 = 1
state_value_2 = 2
state_value_3 = 3
state_value_4 = 4
state_value_5 = 5
state_value_6 = 6
state_value_7 = 7
state_value_8 = 8
state_value_9 = 9
state_value_10 = 10
state_value_11 = 11
state_value_12 = 12
state_value_13 = 13
state_value_14 = 14
state_value_15 = 15
state_value_16 = 16
state_value_17 = 17
state_value_18 = 18
state_value_19 = 19
state_value_20 = 20

[f target q1]
datatype = double
unit = GHz
def_value = 0
tooltip = Target frequency of qubit 1
permission = WRITE
state_quant = Number of Z-Control Lines
group = Qubit 1
section = Setting
state_value_1 = 1
state_value_2 = 2
state_value_3 = 3
state_value_4 = 4
state_value_5 = 5
state_value_6 = 6
state_value_7 = 7
state_value_8 = 8
state_value_9 = 9
state_value_10 = 10
state_value_11 = 11
state_value_12 = 12
state_value_13 = 13
state_value_14 = 14
state_value_15 = 15
state_value_16 = 16
state_value_17 = 17
state_value_18 = 18
state_value_19 = 19
state_value_20 = 20

[Slope q1]
datatype = COMBO
state_quant = Number of Z-Control Lines
def_value = Negative
state_value_1 = 1
state_value_2 = 2
state_value_3 = 3
state_value_4 = 4
state_value_5 = 5
state_value_6 = 6
state_value_7 = 7
state_value_8 = 8
state_value_9 = 9
state_value_10 = 10
state_value_11 = 11
state_value_12 = 12
state_value_13 = 13
state_value_14 = 14
state_value_15 = 15
state_value_16 = 16
state_value_17 = 17
state_value_18 = 18
state_value_19 = 19
state_value_20 = 20
combo_def_1 = Positive
combo_def_2 = Negative
group = Qubit 1
section = Setting

[V target q1]
datatype = double
unit = V
tooltip = Target Voltage of qubit 1
def_value = 0
permission = WRITE
state_quant = Number of Z-Control Lines
group = Target Voltage 1
section = Setting
state_value_1 = 1
state_value_2 = 2
state_value_3 = 3
state_value_4 = 4
state_value_5 = 5
state_value_6 = 6
state_value_7 = 7
state_value_8 = 8
state_value_9 = 9
state_value_10 = 10
state_value_11 = 11
state_value_12 = 12
state_value_13 = 13
state_value_14 = 14
state_value_15 = 15
state_value_16 = 16
state_value_17 = 17
state_value_18 = 18
state_value_19 = 19
state_value_20 = 20

[f max q2]
datatype = double
unit = GHz
def_value = 0
permission = WRITE
tooltip = Maximum frequency of qubit 2
state_quant = Number of Z-Control Lines
group = Qubit 2
section = Setting
state_value_1 = 2
state_value_2 = 3
state_value_3 = 4
state_value_4 = 5
state_value_5 = 6
state_value_6 = 7
state_value_7 = 8
state_value_8 = 9
state_value_9 = 10
state_value_10 = 11
state_value_11 = 12
state_value_12 = 13
state_value_13 = 14
state_value_14 = 15
state_value_15 = 16
state_value_16 = 17
state_value_17 = 18
state_value_18 = 19
state_value_19 = 20

[f min q2]
datatype = double
unit = GHz
def_value = 0
permission = WRITE
tooltip =  Minimum frequency of qubit 2 (if asymmetric)
state_quant = Number of Z-Control Lines
group = Qubit 2
section = Setting
state_value_1 = 2
state_value_2 = 3
state_value_3 = 4
state_value_4 = 5
state_value_5 = 6
state_value_6 = 7
state_value_7 = 8
state_value_8 = 9
state_value_9 = 10
state_value_10 = 11
state_value_11 = 12
state_value_12 = 13
state_value_13 = 14
state_value_14 = 15
state_value_15 = 16
state_value_16 = 17
state_value_17 = 18
state_value_18 = 19
state_value_19 = 20

[V0 q2]
datatype = double
unit = V
def_value = 0
permission = WRITE
state_quant = Number of Z-Control Lines
group = Qubit 2
section = Setting
state_value_1 = 2
state_value_2 = 3
state_value_3 = 4
state_value_4 = 5
state_value_5 = 6
state_value_6 = 7
state_value_7 = 8
state_value_8 = 9
state_value_9 = 10
state_value_10 = 11
state_value_11 = 12
state_value_12 = 13
state_value_13 = 14
state_value_14 = 15
state_value_15 = 16
state_value_16 = 17
state_value_17 = 18
state_value_18 = 19
state_value_19 = 20

[V bias q2]
datatype = double
unit = V
def_value = 0
permission = WRITE
state_quant = Number of Z-Control Lines
group = Qubit 2
section = Setting
state_value_1 = 2
state_value_2 = 3
state_value_3 = 4
state_value_4 = 5
state_value_5 = 6
state_value_6 = 7
state_value_7 = 8
state_value_8 = 9
state_value_9 = 10
state_value_10 = 11
state_value_11 = 12
state_value_12 = 13
state_value_13 = 14
state_value_14 = 15
state_value_15 = 16
state_value_16 = 17
state_value_17 = 18
state_value_18 = 19
state_value_19 = 20

[f bias q2]
datatype = double
unit = GHz
def_value = 0
tooltip = frequency of qubit 2 with only V bias q2 applied and others 0
permission = WRITE
state_quant = Number of Z-Control Lines
group = Qubit 2
section = Setting
state_value_1 = 2
state_value_2 = 3
state_value_3 = 4
state_value_4 = 5
state_value_5 = 6
state_value_6 = 7
state_value_7 = 8
state_value_8 = 9
state_value_9 = 10
state_value_10 = 11
state_value_11 = 12
state_value_12 = 13
state_value_13 = 14
state_value_14 = 15
state_value_15 = 16
state_value_16 = 17
state_value_17 = 18
state_value_18 = 19
state_value_19 = 20

[f target q2]
datatype = double
unit = GHz
def_value = 0
tooltip = Target frequency of qubit 2
permission = WRITE
state_quant = Number of Z-Control Lines
group = Qubit 2
section = Setting
state_value_1 = 2
state_value_2 = 3
state_value_3 = 4
state_value_4 = 5
state_value_5 = 6
state_value_6 = 7
state_value_7 = 8
state_value_8 = 9
state_value_9 = 10
state_value_10 = 11
state_value_11 = 12
state_value_12 = 13
state_value_13 = 14
state_value_14 = 15
state_value_15 = 16
state_value_16 = 17
state_value_17 = 18
state_value_18 = 19
state_value_19 = 20

[Slope q2]
datatype = COMBO
state_quant = Number of Z-Control Lines
def_value = Negative
state_value_1 = 2
state_value_2 = 3
state_value_3 = 4
state_value_4 = 5
state_value_5 = 6
state_value_6 = 7
state_value_7 = 8
state_value_8 = 9
state_value_9 = 10
state_value_10 = 11
state_value_11 = 12
state_value_12 = 13
state_value_13 = 14
state_value_14 = 15
state_value_15 = 16
state_value_16 = 17
state_value_17 = 18
state_value_18 = 19
state_value_19 = 20
combo_def_1 = Positive
combo_def_2 = Negative
group = Qubit 2
section = Setting

[V target q2]
datatype = double
unit = V
tooltip = Target Voltage of qubit 2
def_value = 0
permission = WRITE
state_quant = Number of Z-Control Lines
group = Target Voltage 2
section = Setting
state_value_1 = 2
state_value_2 = 3
state_value_3 = 4
state_value_4 = 5
state_value_5 = 6
state_value_6 = 7
state_value_7 = 8
state_value_8 = 9
state_value_9 = 10
state_value_10 = 11
state_value_11 = 12
state_value_12 = 13
state_value_13 = 14
state_value_14 = 15
state_value_15 = 16
state_value_16 = 17
state_value_17 = 18
state_value_18 = 19
state_value_19 = 20

[f max q3]
datatype = double
unit = GHz
def_value = 0
permission = WRITE
tooltip = Maximum frequency of qubit 3
state_quant = Number of Z-Control Lines
group = Qubit 3
section = Setting
state_value_1 = 3
state_value_2 = 4
state_value_3 = 5
state_value_4 = 6
state_value_5 = 7
state_value_6 = 8
state_value_7 = 9
state_value_8 = 10
state_value_9 = 11
state_value_10 = 12
state_value_11 = 13
state_value_12 = 14
state_value_13 = 15
state_value_14 = 16
state_value_15 = 17
state_value_16 = 18
state_value_17 = 19
state_value_18 = 20

[f min q3]
datatype = double
unit = GHz
def_value = 0
permission = WRITE
tooltip =  Minimum frequency of qubit 3 (if asymmetric)
state_quant = Number of Z-Control Lines
group = Qubit 3
section = Setting
state_value_1 = 3
state_value_2 = 4
state_value_3 = 5
state_value_4 = 6
state_value_5 = 7
state_value_6 = 8
state_value_7 = 9
state_value_8 = 10
state_value_9 = 11
state_value_10 = 12
state_value_11 = 13
state_value_12 = 14
state_value_13 = 15
state_value_14 = 16
state_value_15 = 17
state_value_16 = 18
state_value_17 = 19
state_value_18 = 20

[V0 q3]
datatype = double
unit = V
def_value = 0
permission = WRITE
state_quant = Number of Z-Control Lines
group = Qubit 3
section = Setting
state_value_1 = 3
state_value_2 = 4
state_value_3 = 5
state_value_4 = 6
state_value_5 = 7
state_value_6 = 8
state_value_7 = 9
state_value_8 = 10
state_value_9 = 11
state_value_10 = 12
state_value_11 = 13
state_value_12 = 14
state_value_13 = 15
state_value_14 = 16
state_value_15 = 17
state_value_16 = 18
state_value_17 = 19
state_value_18 = 20

[V bias q3]
datatype = double
unit = V
def_value = 0
permission = WRITE
state_quant = Number of Z-Control Lines
group = Qubit 3
section = Setting
state_value_1 = 3
state_value_2 = 4
state_value_3 = 5
state_value_4 = 6
state_value_5 = 7
state_value_6 = 8
state_value_7 = 9
state_value_8 = 10
state_value_9 = 11
state_value_10 = 12
state_value_11 = 13
state_value_12 = 14
state_value_13 = 15
state_value_14 = 16
state_value_15 = 17
state_value_16 = 18
state_value_17 = 19
state_value_18 = 20

[f bias q3]
datatype = double
unit = GHz
def_value = 0
tooltip = frequency of qubit 3 with only V bias q3 applied and others 0
permission = WRITE
state_quant = Number of Z-Control Lines
group = Qubit 3
section = Setting
state_value_1 = 3
state_value_2 = 4
state_value_3 = 5
state_value_4 = 6
state_value_5 = 7
state_value_6 = 8
state_value_7 = 9
state_value_8 = 10
state_value_9 = 11
state_value_10 = 12
state_value_11 = 13
state_value_12 = 14
state_value_13 = 15
state_value_14 = 16
state_value_15 = 17
state_value_16 = 18
state_value_17 = 19
state_value_18 = 20

[f target q3]
datatype = double
unit = GHz
def_value = 0
tooltip = Target frequency of qubit 3
permission = WRITE
state_quant = Number of Z-Control Lines
group = Qubit 3
section = Setting
state_value_1 = 3
state_value_2 = 4
state_value_3 = 5
state_value_4 = 6
state_value_5 = 7
state_value_6 = 8
state_value_7 = 9
state_value_8 = 10
state_value_9 = 11
state_value_10 = 12
state_value_11 = 13
state_value_12 = 14
state_value_13 = 15
state_value_14 = 16
state_value_15 = 17
state_value_16 = 18
state_value_17 = 19
state_value_18 = 20

[Slope q3]
datatype = COMBO
state_quant = Number of Z-Control Lines
def_value = Negative
state_value_1 = 3
state_value_2 = 4
state_value_3 = 5
state_value_4 = 6
state_value_5 = 7
state_value_6 = 8
state_value_7 = 9
state_value_8 = 10
state_value_9 = 11
state_value_10 = 12
state_value_11 = 13
state_value_12 = 14
state_value_13 = 15
state_value_14 = 16
state_value_15 = 17
state_value_16 = 18
state_value_17 = 19
state_value_18 = 20
combo_def_1 = Positive
combo_def_2 = Negative
group = Qubit 3
section = Setting

[V target q3]
datatype = double
unit = V
tooltip = Target Voltage of qubit 3
def_value = 0
permission = WRITE
state_quant = Number of Z-Control Lines
group = Target Voltage 3
section = Setting
state_value_1 = 3
state_value_2 = 4
state_value_3 = 5
state_value_4 = 6
state_value_5 = 7
state_value_6 = 8
state_value_7 = 9
state_value_8 = 10
state_value_9 = 11
state_value_10 = 12
state_value_11 = 13
state_value_12 = 14
state_value_13 = 15
state_value_14 = 16
state_value_15 = 17
state_value_16 = 18
state_value_17 = 19
state_value_18 = 20

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

[Confirm]
datatype = BUTTON
group = Confirm
section = Setting

[M1-1]
datatype = double
unit = V
def_value = 1
tooltip = Qubit 1 frequency relationship with flux bias 1 without any other flux presence
permission = BOTH
state_quant = Number of Z-Control Lines
group = Crosstalk Matrix
section = Setting
state_value_1 = 1
state_value_2 = 2
state_value_3 = 3
state_value_4 = 4
state_value_5 = 5
state_value_6 = 6
state_value_7 = 7
state_value_8 = 8
state_value_9 = 9
state_value_10 = 10
state_value_11 = 11
state_value_12 = 12
state_value_13 = 13
state_value_14 = 14
state_value_15 = 15
state_value_16 = 16
state_value_17 = 17
state_value_18 = 18
state_value_19 = 19
state_value_20 = 20

[M1-2]
datatype = double
unit = V
def_value = 0
tooltip = Qubit 1 frequency change in the presence of flux bias 2
permission = BOTH
state_quant = Number of Z-Control Lines
group = Crosstalk Matrix
section = Setting
state_value_1 = 2
state_value_2 = 3
state_value_3 = 4
state_value_4 = 5
state_value_5 = 6
state_value_6 = 7
state_value_7 = 8
state_value_8 = 9
state_value_9 = 10
state_value_10 = 11
state_value_11 = 12
state_value_12 = 13
state_value_13 = 14
state_value_14 = 15
state_value_15 = 16
state_value_16 = 17
state_value_17 = 18
state_value_18 = 19
state_value_19 = 20

[M1-3]
datatype = double
unit = V
def_value = 0
tooltip = Qubit 1 frequency change in the presence of flux bias 3
permission = BOTH
state_quant = Number of Z-Control Lines
group = Crosstalk Matrix
section = Setting
state_value_1 = 3
state_value_2 = 4
state_value_3 = 5
state_value_4 = 6
state_value_5 = 7
state_value_6 = 8
state_value_7 = 9
state_value_8 = 10
state_value_9 = 11
state_value_10 = 12
state_value_11 = 13
state_value_12 = 14
state_value_13 = 15
state_value_14 = 16
state_value_15 = 17
state_value_16 = 18
state_value_17 = 19
state_value_18 = 20

[M1-4]
datatype = double
unit = V
def_value = 0
tooltip = Qubit 1 frequency change in the presence of flux bias 4
permission = BOTH
state_quant = Number of Z-Control Lines
group = Crosstalk Matrix
section = Setting
state_value_1 = 4
state_value_2 = 5
state_value_3 = 6
state_value_4 = 7
state_value_5 = 8
state_value_6 = 9
state_value_7 = 10
state_value_8 = 11
state_value_9 = 12
state_value_10 = 13
state_value_11 = 14
state_value_12 = 15
state_value_13 = 16
state_value_14 = 17
state_value_15 = 18
state_value_16 = 19
state_value_17 = 20

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

[Minv1-1]
datatype = double
unit = V
def_value = 1
tooltip = Qubit 1 frequency relationship with flux bias 1 without any other flux presence
permission = BOTH
state_quant = Number of Z-Control Lines
group = Crosstalk Matrix (Inverse)
section = Output
state_value_1 = 1
state_value_2 = 2
state_value_3 = 3
state_value_4 = 4
state_value_5 = 5
state_value_6 = 6
state_value_7 = 7
state_value_8 = 8
state_value_9 = 9
state_value_10 = 10
state_value_11 = 11
state_value_12 = 12
state_value_13 = 13
state_value_14 = 14
state_value_15 = 15
state_value_16 = 16
state_value_17 = 17
state_value_18 = 18
state_value_19 = 19
state_value_20 = 20

[Minv1-2]
datatype = double
unit = V
def_value = 0
tooltip = Qubit 1 frequency change in the presence of flux bias 2
permission = BOTH
state_quant = Number of Z-Control Lines
group = Crosstalk Matrix (Inverse)
section = Output
state_value_1 = 2
state_value_2 = 3
state_value_3 = 4
state_value_4 = 5
state_value_5 = 6
state_value_6 = 7
state_value_7 = 8
state_value_8 = 9
state_value_9 = 10
state_value_10 = 11
state_value_11 = 12
state_value_12 = 13
state_value_13 = 14
state_value_14 = 15
state_value_15 = 16
state_value_16 = 17
state_value_17 = 18
state_value_18 = 19
state_value_19 = 20

[Minv1-3]
datatype = double
unit = V
def_value = 0
tooltip = Qubit 1 frequency change in the presence of flux bias 3
permission = BOTH
state_quant = Number of Z-Control Lines
group = Crosstalk Matrix (Inverse)
section = Output
state_value_1 = 3
state_value_2 = 4
state_value_3 = 5
state_value_4 = 6
state_value_5 = 7
state_value_6 = 8
state_value_7 = 9
state_value_8 = 10
state_value_9 = 11
state_value_10 = 12
state_value_11 = 13
state_value_12 = 14
state_value_13 = 15
state_value_14 = 16
state_value_15 = 17
state_value_16 = 18
state_value_17 = 19
state_value_18 = 20

[Minv1-4]
datatype = double
unit = V
def_value = 0
tooltip = Qubit 1 frequency change in the presence of flux bias 4
permission = BOTH
state_quant = Number of Z-Control Lines
group = Crosstalk Matrix (Inverse)
section = Output
state_value_1 = 4
state_value_2 = 5
state_value_3 = 6
state_value_4 = 7
state_value_5 = 8
state_value_6 = 9
state_value_7 = 10
state_value_8 = 11
state_value_9 = 12
state_value_10 = 13
state_value_11 = 14
state_value_12 = 15
state_value_13 = 16
state_value_14 = 17
state_value_15 = 18
state_value_16 = 19
state_value_17 = 20

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

[Adjusted Voltage 1]
datatype = double
unit = V
def_value = 0
permission = READ
state_quant = Number of Z-Control Lines
group = Output
section = Output
state_value_1 = 2
state_value_2 = 3
state_value_3 = 4
state_value_4 = 5
state_value_5 = 6
state_value_6 = 7
state_value_7 = 8
state_value_8 = 9
state_value_9 = 10
state_value_10 = 11
state_value_11 = 12
state_value_12 = 13
state_value_13 = 14
state_value_14 = 15
state_value_15 = 16
state_value_16 = 17
state_value_17 = 18
state_value_18 = 19
state_value_19 = 20
state_value_20 = 21

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

[M2-2]
datatype = double
unit = V
def_value = 1
tooltip = Qubit 1 frequency relationship with flux bias 2 without any other flux presence
permission = BOTH
state_quant = Number of Z-Control Lines
group = Crosstalk Matrix
section = Setting
state_value_1 = 2
state_value_2 = 3
state_value_3 = 4
state_value_4 = 5
state_value_5 = 6
state_value_6 = 7
state_value_7 = 8
state_value_8 = 9
state_value_9 = 10
state_value_10 = 11
state_value_11 = 12
state_value_12 = 13
state_value_13 = 14
state_value_14 = 15
state_value_15 = 16
state_value_16 = 17
state_value_17 = 18
state_value_18 = 19
state_value_19 = 20

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

[Minv2-2]
datatype = double
unit = V
def_value = 1
tooltip = Qubit 1 frequency relationship with flux bias 2 without any other flux presence
permission = BOTH
state_quant = Number of Z-Control Lines
group = Crosstalk Matrix (Inverse)
section = Output
state_value_1 = 2
state_value_2 = 3
state_value_3 = 4
state_value_4 = 5
state_value_5 = 6
state_value_6 = 7
state_value_7 = 8
state_value_8 = 9
state_value_9 = 10
state_value_10 = 11
state_value_11 = 12
state_value_12 = 13
state_value_13 = 14
state_value_14 = 15
state_value_15 = 16
state_value_16 = 17
state_value_17 = 18
state_value_18 = 19
state_value_19 = 20

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

[Adjusted Voltage 2]
datatype = double
unit = V
def_value = 0
permission = READ
state_quant = Number of Z-Control Lines
group = Output
section = Output
state_value_1 = 3
state_value_2 = 4
state_value_3 = 5
state_value_4 = 6
state_value_5 = 7
state_value_6 = 8
state_value_7 = 9
state_value_8 = 10
state_value_9 = 11
state_value_10 = 12
state_value_11 = 13
state_value_12 = 14
state_value_13 = 15
state_value_14 = 16
state_value_15 = 17
state_value_16 = 18
state_value_17 = 19
state_value_18 = 20
state_value_19 = 21

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

[M3-3]
datatype = double
unit = V
def_value = 1
tooltip = Qubit 1 frequency relationship with flux bias 3 without any other flux presence
permission = BOTH
state_quant = Number of Z-Control Lines
group = Crosstalk Matrix
section = Setting
state_value_1 = 3
state_value_2 = 4
state_value_3 = 5
state_value_4 = 6
state_value_5 = 7
state_value_6 = 8
state_value_7 = 9
state_value_8 = 10
state_value_9 = 11
state_value_10 = 12
state_value_11 = 13
state_value_12 = 14
state_value_13 = 15
state_value_14 = 16
state_value_15 = 17
state_value_16 = 18
state_value_17 = 19
state_value_18 = 20

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

[Minv3-3]
datatype = double
unit = V
def_value = 1
tooltip = Qubit 1 frequency relationship with flux bias 3 without any other flux presence
permission = BOTH
state_quant = Number of Z-Control Lines
group = Crosstalk Matrix (Inverse)
section = Output
state_value_1 = 3
state_value_2 = 4
state_value_3 = 5
state_value_4 = 6
state_value_5 = 7
state_value_6 = 8
state_value_7 = 9
state_value_8 = 10
state_value_9 = 11
state_value_10 = 12
state_value_11 = 13
state_value_12 = 14
state_value_13 = 15
state_value_14 = 16
state_value_15 = 17
state_value_16 = 18
state_value_17 = 19
state_value_18 = 20

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

[Adjusted Voltage 3]
datatype = double
unit = V
def_value = 0
permission = READ
state_quant = Number of Z-Control Lines
group = Output
section = Output
state_value_1 = 4
state_value_2 = 5
state_value_3 = 6
state_value_4 = 7
state_value_5 = 8
state_value_6 = 9
state_value_7 = 10
state_value_8 = 11
state_value_9 = 12
state_value_10 = 13
state_value_11 = 14
state_value_12 = 15
state_value_13 = 16
state_value_14 = 17
state_value_15 = 18
state_value_16 = 19
state_value_17 = 20
state_value_18 = 21

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

